---
API: 2.1
OpenSesame: 3.2.8b1
Platform: posix
---
set width 1920
set uniform_coordinates yes
set title "eye-capture_GT"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/experimenter/git/DMT2019/eye_capture"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background black

define inline_script apply_settings
	set description "Executes Python code"
	___run__
	webcam_path = "/dev/video{}".format(camera_number)
	set_string = ",".join(
		param_name+"="+param_value
		for param_name, param_value in cam_settings.items()
	)
	cmd_fmt = "v4l2-ctl -d {device} --set-ctrl {params}".format(
		device=webcam_path,
		params=set_string
	)
	sys.stderr.write(cmd_fmt+"\n")
	subprocess.call(cmd_fmt, shell=True)
	__end__
	___prepare__
	import socket
	import subprocess
	__end__

define synth beep
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define sketchpad camera_pause
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Please look at the camera" x=0 y=0 z_index=0

define inline_script camera_settings
	set description "Executes Python code"
	set _run ""
	___prepare__
	# these will be applied after the camera is selected
	cam_settings = {
		"white_balance_temperature_auto": "0", # off
		"power_line_frequency": "2", # 60Hz
		"exposure_auto": "1", # off
		"exposure_absolute": "150",
		"saturation": "1" # greyscale
	}
	cam_resolution = (1280,960)
	camera_number = 0
	port_base = 50000
	eye_smallest_px = 100
	eye_largest_px = 200
	keep_face_image = True # False for testing!
	
	#set up
	output_path = u'/home/experimenter/DMT-AD/DMT2019_eyeimages/ground_truth'
	photographer_path = u'/home/experimenter/DMT-AD/DMT2019_eyecapture/'
	images_to_save = []
	
	#for if eye_capture loop
	#eye_capture scripts don't run if false and no eye-images are caught
	eye_capture = True
	__end__

define loop camera_test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run test

define inline_script capture_eye_image
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define inline_script clean_up
	set description "Executes Python code"
	___run__
	
	def cleanup():
		if process is not None:
			sys.stderr.write("terminating {}\n".format(process.pid))
			process.terminate()
			clock.sleep(500)
			if process.poll() is None:
				sys.stderr.write("killing {}\n".format(process.pid))
				process.kill()
		else:
			sys.stderr.write("no process!\n")
			
	register_cleanup_function(cleanup)
	__end__
	set _prepare ""

define sketchpad end
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=38 html=yes show_if=always text="End. Thank you" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run in_case_of_connection_failed always
	run eye_detection_license always
	run camera_settings always
	run apply_settings "=eye_capture"
	run photographer_create "=eye_capture"
	run clean_up "=eye_capture"
	run outside_loop always
	run save_camera_images "=eye_capture"

define inline_script experiment_script
	set description "Executes Python code"
	___run__
	# in case mouse is pressed when we get here
	wait_while_lmb_pressed(True)
	
	# wait for "mouse down" i.e. touch
	wait_while_lmb_pressed(False,update_fn=get_update_function(False))
	t0 = clock.time()
	
	#eye grab 1
	if eye_capture:
		var.eye_image_touch1_time, var.eye_image_touch1_file = capture_eye_image("touch1")
	
	# wait for "mouse up"
	result = wait_while_lmb_pressed(
		True,
		timeout = var.target_onset,
		bounds=target_bounds,
		update_fn=get_update_function(True)
	)
	
	committed = False
	
	if result == TouchpadResult.TIMED_OUT:
	
		target_time = clock.time()
		var.sanity_check = target_time - t0
	
		#waiting for target presentation, maintain all the same
		result = wait_while_lmb_pressed(True, bounds=target_bounds,update_fn=get_update_function2(True))
	
		if result == TouchpadResult.LIFTED:
			#eye grab 3
			if eye_capture:
				var.eye_image_reach_time, var.eye_image_reach_file = capture_eye_image("reach")
	
			#to record these need some kind of 'if mouse up' loop
			var.reach_t0 = clock.time() #reaching onset
			var.time_touch_offset = var.reach_t0 - target_time
	
			target_time = clock.time()
	
			elapsed = clock.time() - t0
			var.mouse_release = False
	
			#touch_response time
			wait_while_lmb_pressed(False, bounds=target_bounds, update_fn=get_update_function2(True))
			committed = True
			
			#eye grab 4
			if eye_capture:
				var.eye_image_touch2_time, var.eye_image_touch2_file = capture_eye_image("touch2")
			
			# reach duration variable for logging
			var.reach_duration = clock.time() - var.reach_t0
			#get mouse response location
			(x,y),time = m.get_pos()
			var.land_x = x
			var.land_y = y
	__end__
	___prepare__
	#circle_string = 'draw circle x={} y={} r={} fill=1 color=white'.format(var.x,var.y,var.targetSize_pix)
	#fix1_string = (
		#'draw line color=white penwidth=5 show_if=always x1="{x1}" x2="{x2}" y1=0 y2=0 z_index=0'.format(
			#x1=var.fix_x-15, x2=var.fix_x+15
		#)
	#)
	#fix2_string = 'draw line color=white penwidth=5 show_if=always x1={x} x2={x} y1=-15 y2=15 z_index=0'.format(
		#x=var.fix_x
	#)
	#stim.elements = [
		#sketchpad_elements.circle(stim,circle_string),
		#sketchpad_elements.line(stim,fix1_string),
		#sketchpad_elements.line(stim,fix2_string)
	#]
	
	# target onset times
	var.target_onset = random.choice(target_onset_values)
	
	target_bounds = (var.touch_x, var.touch_y_loc, var.touch_x+var.pix_perDeg*2, 129) #bounding box for target
	
	def get_update_function(pressed):
		def update_both(t,c):
			update_fixation(t,c,pressed)
			update_touchpad(t,c,pressed)
		return update_both
	
	def get_update_function2(pressed):
		def update_both2(t,c):
			update_fixation(t,c,pressed)
			update_target(t,c,pressed)
		return update_both2
	
	def update_fixation(t,c,pressed):
		if pressed:
			i = int(t % 255)
			col = (255, i, i)
		else:
			col = "white"
		c_x, c_y = var.fix_x, var.fix_y
		c.line(c_x-fixWidth_pix/2,c_y,c_x+fixWidth_pix/2,c_y,color=col,penwidth=5)
		c.line(c_x,c_y-fixWidth_pix/2,c_x,c_y+fixWidth_pix/2,color=col,penwidth=5)
	
	#draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	
	
	def update_touchpad(t,c,pressed):
		if pressed:
			c.rect(x=var.touch_x, y=var.touch_y_loc, w=var.touch_y*2, h=var.touch_y*2, color="black", penwidth=5, fill=0)		
		else:
			c.rect(x=var.touch_x, y=var.touch_y_loc, w=var.touch_y*2, h=var.touch_y*2, color="white", penwidth=5, fill=0)
	
	def update_target(t,c,pressed):
		if pressed:
			c.circle(x=var.targ_x, y = var.targ_y, r=var.targetSize_pix, fill=True, color="white")
	
	
	#eye image prep
	def capture_eye_image(image_name):
		fmt = u'subject{sub}_{title}_{hand}_{date}_{trial}_{image}.png'
		filename = fmt.format(
			sub=subject_nr_string,
			date=date_str,
			title=var.title,
			hand=var.hand,
			image=image_name,
			trial=var.count_experiment_script+1
		)
		out_dir = os.path.join(output_path,subject_nr_string)
		if not os.path.exists(out_dir):
			os.makedirs(out_dir)
		out_path = os.path.join(out_dir,filename)
		t0 = clock.time()
		client_socket.send("{"+codecs.encode(out_path,'utf8')+"}")
		image_time_taken = clock.time()-t0
		sys.stderr.write("read took {}\n".format(clock.time()-t0))
		images_to_save.append(out_path)
		return image_time_taken, filename
	__end__

define notepad eye_detection_license
	__note__
	This is the license for the file "haarcascade_eye.xml"
	
	IMPORTANT: READ BEFORE DOWNLOADING, COPYING, INSTALLING OR USING.
	
	By downloading, copying, installing or using the software you agree to this license.
	If you do not agree to this license, do not download, install, copy or use the software.
	
	
	                        Intel License Agreement
	                For Open Source Computer Vision Library
	
	Copyright (C) 2000, Intel Corporation, all rights reserved.
	Third party copyrights are property of their re{"main-item-name": "new_pygaze_wait", "type": "item-snippet", "items": [{"item-type": "pygaze_wait", "item-name": "new_pygaze_wait", "script": ""}]}spective owners.
	
	Redistribution and use in source and binary forms, with or without modification, are permitted provided that the following conditions are met:
	
	   * Redistribution's of source code must retain the above copyright notice, this list of conditions and the following disclaimer.
	
	   * Redistribution's in binary form must reproduce the above copyright notice, this list of conditions and the following disclaimer in the documentation and/or other materials provided with the distribution.
	
	   * The name of Intel Corporation may not be used to endorse or promote products derived from this software without specific prior written permission.
	
	This software is provided by the copyright holders and contributors "as is" and any express or implied warranties, including, but not limited to, the implied warranties of merchantability and fitness for a particular purpose are disclaimed.
	
	In no event shall the Intel Corporation or contributors be liable for any direct, indirect, incidental, special, exemplary, or consequential damages (including, but not limited to, procurement of substitute goods or services;
	 loss of use, data, or profits; or business interruption) however caused and on any theory of liability, whether in contract, strict liability, or tort (including negligence or otherwise) arising in any way out of the use of this software, even if advised of the possibility of such damage.
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script eye_image_prep
	set description "Executes Python code"
	set _run ""
	___prepare__
	#eye image prep
	def capture_eye_image(image_name):
		fmt = u'subject{sub}_{title}_{date}_{trial}_{image}.png'
		filename = fmt.format(
			sub=subject_nr_string,
			date=date_str,
			title=var.title,
			image=image_name,
			trial=var.count_eye_image_prep+1
		)
		out_dir = os.path.join(output_path,subject_nr_string)
		if not os.path.exists(out_dir):
			os.makedirs(out_dir)
		out_path = os.path.join(out_dir,filename)
		t0 = clock.time()
		client_socket.send("{"+codecs.encode(out_path,'utf8')+"}")
		image_time_taken = clock.time()-t0
		sys.stderr.write("read took {}\n".format(clock.time()-t0))
		images_to_save.append(out_path)
		return image_time_taken, filename
	__end__

define sequence eyecapture_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run global_prep always
	run intro always
	run target_loop always
	run end always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script global_prep
	set description "Executes Python code"
	set _run ""
	___prepare__
	# prepare steps that only need to happen once
	
	import csv
	from datetime import datetime
	from enum import Enum
	
	from libopensesame import sketchpad_elements
	from openexp.keyboard import keyboard
	
	# packages useful for generating random arrays and selecting from them
	# handing for varying target onset time
	import random
	from random import choice
	import numpy as np
	
	
	m = Mouse()
	myKeys = keyboard(exp)
				
	
	# running info for degrees visual angle
	# getting information about degrees visual angle
	import math
	from math import atan2, degrees
	h = 17.5 #monitor height in cm
	w = 31
	d = 40 #distance between pp and monitor
	ry = 1080 #vertical resolution of monitor
	rx = 1920
	
	#deg_perPixY = degrees(atan2(.5*h, d))/(.5*ry)
	#deg_perPixX =  degrees(atan2(.5*w, d))/(.5*rx)
	#var.deg_perPix = (deg_perPixY + deg_perPixX)/2
	#var.pix_perDeg = 1/var.deg_perPix
	var.pix_perDeg = 43.1663 #taken from labview document
	var.deg_perPix = 1/var.pix_perDeg
	
	var.targetSize_pix = var.pix_perDeg/2 #size of target in pixels
	var.targetSize_deg = var.targetSize_pix*var.deg_perPix #converting both fix target distance and size into deg
	
	#sizes in mm for reporting
	var.pix_permm = ((ry/(h*10))+(rx/(w*10))) /2
	var.mm_perPix = 1/var.pix_permm
	var.cm_perPix = var.mm_perPix/10
	var.targetSize_mm = var.mm_perPix * var.targetSize_pix
	
	# fixation cross width (1 deg)
	fixWidth_pix = var.pix_perDeg
	
	# recording log file specfic to experiment
	subject_nr_string = str(var.subject_nr)
	date_str = datetime.now().isoformat()[:-7]
	data_path = u'/home/experimenter/DMT-AD/DMT2019_eyecapture/ground_truth/'
	data_string = u'subject{sub}_{title}_{date}.csv'
	#individual subject path
	data_dir = os.path.join(data_path,subject_nr_string)
	if not os.path.exists(data_dir):
			os.makedirs(data_dir)
	data_outpath = os.path.join(data_dir, data_string)
	datafile = log.open(data_outpath.format(sub=subject_nr_string, date=date_str, title=var.title))
	__end__

define notepad in_case_of_connection_failed
	__note__
	This is probably due to an old photographer process. This can be killed with:
	
	ps aux | grep photographer
	
	in the output you'll see a line like:
	
	experim+  3106  0.5  0.8 839700 65544 ?        Sl   12:54   0:01 python /home/experimenter/DMT-AD/DMT2019_eyecapture/photographer.py 0 1280 960 50247
	
	Use the kill command with the number in the second column:
	
	kill 3106
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad intro
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=38 html=yes show_if=always text="Start eye-capture paradigm<br />Are you ready?" x=0 y=0 z_index=0

define logger new_logger
	set description "Logs experimental data"
	set auto_log no
	log eye_image_target_time
	log eye_image_target_file
	log subject_nr
	log targ_x
	log targ_y

define sequence outside_loop
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run camera_test "=eye_capture"
	run eyecapture_sequence always

define inline_script photographer_create
	set description "Executes Python code"
	___run__
	port = port_base+random.randrange(0,1000)
	
	# create photographer
	cmd = [
		"python",
		os.path.join(photographer_path, "photographer.py"),
		str(camera_number),
		str(cam_resolution[0]),
		str(cam_resolution[1]),
		str(port)
	]
	print(cmd)
	process = subprocess.Popen(cmd)
	
	# server creates socket first before we start!
	clock.sleep(2000)
	
	client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
	client_socket.connect(("localhost", port))
	__end__
	___prepare__
	import random
	import socket
	import sys
	import os
	__end__

define inline_script save_camera_images
	set description "Executes Python code"
	___run__
	
	for out_path in images_to_save:
		if not eye_capture:
			continue
		if not os.path.exists(out_path):
			sys.stderr.write("couldn't find "+out_path+"\n")
			continue
		im = cv2.imread(out_path)
		grey = cv2.cvtColor(im, cv2.COLOR_BGR2GRAY)
		eyepos, _, weights = eye_cascade.detectMultiScale3(
			grey,
			outputRejectLevels=True
		)
		weights = list(weights)
		eyes_with_weights = zip(eyepos, weights)
		# filter for size
		def size_ok(epos):
			x, y, w, h = epos
			return (
				(eye_smallest_px <= w <= eye_largest_px)
				and	(eye_smallest_px <= h <= eye_largest_px)
			)
		eyes_filtered = [
			(epos, wgt) for epos, wgt in eyes_with_weights
			if size_ok(epos)
		]
		sorted_eyes = sorted(
			eyes_filtered,
			key=lambda x: x[1],
			reverse=True
		)	
		eyes = sorted_eyes[:2] # take best two
		
		if len(eyes) == 2:
			if eyes[0][0][0] > eyes[1][0][0]:
				eyes[0], eyes[1] = eyes[1], eyes[0]
		
		for idx, (eyepos, weight) in enumerate(eyes):
			x, y, w, h = eyepos
			eye = im[y:y+h,x:x+w]
			cv2.imwrite("{}_eye{}.png".format(out_path[:-4], idx), eye)
	
		#for eyepos, weight in eyes:
		#	cv2.rectangle(im, (x, y), (x+w, y+h), (255, 0, 0), 2)
		
		if keep_face_image:
			cv2.imwrite("{}".format(out_path), im)
		else:
			os.unlink(out_path)
	__end__
	___prepare__
	import cv2
	
	eye_cascade = cv2.CascadeClassifier(
		os.path.join(photographer_path,'haarcascade_eye.xml')
	)
	__end__

define inline_script show_picture_delete
	set description "Executes Python code"
	___run__
	
	c = Canvas()
	image_scale = 0.6*float(c.height)/float(cam_resolution[1])
	
	c.image(test_pic,scale=image_scale)
	c.show()
	
	k = Keyboard()
	k.get_key()
	
	os.unlink(test_pic)
	__end__
	set _prepare ""

define inline_script target
	set description "Executes Python code"
	___run__
	#showing target until keypress
	c.show()
	response,time = myKeys.get_key()
	
	#capture eye image
	if eye_capture:
		var.eye_image_target_time, var.eye_image_target_file = capture_eye_image("target")
	__end__
	___prepare__
	#target presentation
	c = Canvas()
	c.circle(x=var.targ_x, y = var.targ_y, r=var.targetSize_pix, fill=True, color="white")
	__end__

define sketchpad target_1
	set duration keypress
	set description "Displays stimuli"

define loop target_loop
	set source_file "target_durations.csv"
	set source file
	set repeat 2
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define sequence test
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run camera_pause always
	run test_picture always
	run wait always
	run show_picture_delete always

define inline_script test_picture
	set description "Executes Python code"
	___run__
	test_pic = os.path.join(output_path,"test.png")
	
	t0 = clock.time()
	sys.stderr.write(test_pic+"\n")
	client_socket.send("{"+codecs.encode(test_pic,'utf8')+"}")
	sys.stderr.write("read took {}\n".format(clock.time()-t0))
	__end__
	set _prepare "import codecs"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run eye_image_prep always
	run target always
	run beep always
	run new_logger always

define sketchpad wait
	set duration 5000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Please wait." x=0 y=0 z_index=0

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.2 <i>Kafkaesque Koffka</i>" x=0 y=0 z_index=0

