---
API: 2.1
OpenSesame: 3.2.7b1
Platform: posix
---
set width 1920
set uniform_coordinates yes
set title Pointing_task
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/experimenter/git/DMT2019/pointingTask/openLoop"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define loop LVF_loop
	set source_file "pointingTask_targets_radial7_left.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence_l

define loop RVF_loop
	set source_file "pointingTask_targets_radial7_right.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 x 154.05
	setcycle 0 y 0
	setcycle 1 x 154.05
	setcycle 1 y 128
	setcycle 2 x 154.05
	setcycle 2 y -128
	setcycle 3 x 452.15
	setcycle 3 y 0
	setcycle 4 x 452.15
	setcycle 4 y 128
	setcycle 5 x 452.15
	setcycle 5 y -128
	setcycle 6 x 750.25
	setcycle 6 y 0
	setcycle 7 x 750.25
	setcycle 7 y 128
	setcycle 8 x 750.25
	setcycle 8 y -128
	run trial_sequence_r

define synth beep
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define synth beep_1
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define sketchpad blank
	# code that means space can be used as esc key
	set duration 0
	set description "Displays stimuli"

define sketchpad blank_1
	# code that means space can be used as esc key
	set duration 0
	set description "Displays stimuli"

define inline_script committed
	set description "Executes Python code"
	___run__
	committed = True
	
	#clocking the end of the beep
	var.beep_end = clock.time()
	var.beep_touchOffset = var.reach_t0 - var.beep_end
	
	#touch_release time
	wait_while_lmb_pressed(True,timeout=1000,bounds=target_bounds)
	var.reach_t0 = clock.time() #reaching onset
	__end__
	set _prepare ""

define inline_script committed_1
	set description "Executes Python code"
	set _run "committed = True"
	set _prepare ""

define sequence counter_even
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run RVF_loop always
	run end_block1 always
	run LVF_loop always

define sequence counter_odd
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run LVF_loop always
	run end_block1 always
	run RVF_loop always

define sketchpad end_block1
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=50 html=yes show_if=always text="</b>End of first block</b><br /><br /><br />Please tell the experimenter<br /><br />Upon their instruction touch the screen to begin second block" x=0 y=0 z_index=0

define sketchpad end_block2
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=50 html=yes show_if=always text="Thank you for taking part in the experiment<br /><br />Please touch the screen to exit" x=0 y=0 z_index=0

define sketchpad end_experiment
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=50 html=yes show_if=always text="Thank you for taking part in this experiment<br /><br />Please touch the screen to exit" x=0 y=0 z_index=0

define loop even
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run global_prep always
	run intro always
	run counter_odd "[subject_parity] = odd"
	run counter_even "[subject_parity] = even"
	run end_experiment always

define inline_script experimentL_script
	set description "Executes Python code"
	___run__
	# in case mouse is pressed when we get here
	wait_while_lmb_pressed(True)
	
	# wait for "mouse down" i.e. touch
	wait_while_lmb_pressed(False)
	
	t0 = clock.time()
	
	# hide target
	fixation_l.run()
	
	# wait for "mouse up"
	wait_while_lmb_pressed(True,timeout=1000,bounds=target_bounds)
	var.reach_t0 = clock.time() #reaching onset
	
	elapsed = clock.time() - t0
	
	
	committed = False
	__end__
	___prepare__
	circle_string = 'draw circle x={} y={} r={} fill=1 color=white'.format(var.x,var.y,var.pix_perDeg)
	fix_dot_l = ' draw fixdot x=900 y=0 color=white show_if=always style=default'
	stim_l.elements = [sketchpad_elements.circle(stim_l,circle_string), sketchpad_elements.fixdot(stim_l,fix_dot_l)]
	
	tr = touch_pad_l.elements[0].eval_properties()
	target_bounds = (tr['x'], tr['y'], tr['x']+tr['w'], tr['y']+tr['h'])
	__end__

define inline_script experimentR_script
	set description "Executes Python code"
	___run__
	# in case mouse is pressed when we get here
	wait_while_lmb_pressed(True)
	
	# wait for "mouse down" i.e. touch
	wait_while_lmb_pressed(False)
	
	t0 = clock.time()
	var.reach_t0 = clock.time()
	
	# hide target
	fixation_r.run()
	
	# wait for "mouse up"
	wait_while_lmb_pressed(True,timeout=500,bounds=target_bounds)
	
	elapsed = clock.time() - t0
	
	committed = False
	__end__
	___prepare__
	circle_string = 'draw circle x={} y={} r={} fill=1 color=white'.format(var.x,var.y, var.pix_perDeg)
	fix_dot_r = ' draw fixdot x=-900 y=0 color=white show_if=always style=default'
	stim_r.elements = [sketchpad_elements.circle(stim_r,circle_string), sketchpad_elements.fixdot(stim_r,fix_dot_r)]
	
	tr = touch_pad_r.elements[0].eval_properties()
	target_bounds = (tr['x'], tr['y'], tr['x']+tr['w'], tr['y']+tr['h'])
	__end__

define sketchpad fixation_l
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=900 y=0 z_index=0

define sketchpad fixation_r
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=-900 y=0 z_index=0

define inline_script global_prep
	set description "Executes Python code"
	set _run ""
	___prepare__
	# prepare steps that only need to happen once
	
	import csv
	
	from libopensesame import sketchpad_elements
	from openexp.keyboard import keyboard
	
	m = Mouse()
	myKeys = keyboard(exp, keylist=['space'])
	
	
	beep = items['beep']
	blank = items['blank']
	#right VF
	stim_r, touch_release_r, response_r = items['target_r'], items['target_mouse_release_r'], items['target_mouse_response_r']
	fixation_r = items['fixation_r']
	touch_pad_r = items['touch_pad_r']
	# left VF
	stim_l, touch_release_l, response_l = items['target_l'], items['target_mouse_release_l'], items['target_mouse_response_l']
	fixation_l = items['fixation_l']
	touch_pad_l = items['touch_pad_l']
	
	def in_bounds(x,y,bounds):
		left, top, right, bottom = bounds
		return x > left and x < right and y > top and y < bottom
	
	def wait_while_lmb_pressed(pressed, timeout=None, bounds=None):
	
		"""
		pressed == True : wait while mouse left button pressed,
		within bounds if present
		pressed == False : wait while mouse left button not pressed
		bounds as (left, top, right, bottom)
		"""
		t0 = clock.time()
		while m.get_pressed()[0] == pressed:
			if pressed and bounds:
				(x, y), time = m.get_pos()
				if not in_bounds(x, y, bounds):
					break
			clock.sleep(1)
			if timeout and clock.time() - t0 >= timeout:
				break
				
	
	# running info for degrees visual angle
	# getting information about degrees visual angle
	import math
	from math import atan2, degrees
	h = 17.5 #monitor height in cm
	d = 40 #distance between pp and monitor
	r = 1080 #vertical resolution of monitor
	deg_perPix = degrees(atan2(.5*h, d))/(.5*r)
	var.pix_perDeg = 1/deg_perPix
	
	fixDist_pix = -900 #maximum distance of fixation target
	targetSize_pix = 64 #size of target in pixels
	fixDist = fixDist_pix*deg_perPix
	targetSize = targetSize_pix*deg_perPix #converting both fix target distance and size into deg
	centreFix = fixDist+(targetSize/2)
	__end__

define sketchpad intro
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=50 html=yes show_if=always text="Welcome to the experiment<br /><br />Touch the screen to start" x=0 y=0 z_index=0

define inline_script invalid_trial_check_1
	set description "Executes Python code"
	___run__
	#key press to indicate valid/invalid trial
	if self.get('correct')==0:
		var.eye_move = 1
		# prepare trail sequence again
		exp.items['trial_sequence'].prepare()
		# re-run trial sequence
		exp.items['trial_sequence'].run()
	
	#logging eye-move yes=1 no=0
	if self.get('correct')==1:
		var.eye_move = 0
	__end__
	set _prepare ""

define inline_script invalid_trial_check_l
	set description "Executes Python code"
	___run__
	#key press to indicate valid/invalid trial
	if self.get('correct')==0:
		var.eye_move = 1
		# prepare trail sequence again
		exp.items['trial_sequence_l'].prepare()
		# re-run trial sequence
		exp.items['trial_sequence_l'].run()
	
	#logging eye-move yes=1 no=0
	if self.get('correct')==1:
		var.eye_move = 0
	__end__
	set _prepare ""

define inline_script invalid_trial_check_r
	set description "Executes Python code"
	___run__
	#key press to indicate valid/invalid trial
	if self.get('correct')==0:
		var.eye_move = 1
		# prepare trail sequence again
		exp.items['trial_sequence_r'].prepare()
		# re-run trial sequence
		exp.items['trial_sequence_r'].run()
	
	#logging eye-move yes=1 no=0
	if self.get('correct')==1:
		var.eye_move = 0
	__end__
	set _prepare ""

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log subject_nr
	log datetime
	log experiment_file
	log log_file
	log eye_move
	log x
	log y
	log cursor_x
	log cursor_y
	log count_experimentL_script
	log count_experimentR_script
	log count_committed
	log time_trial_sequence_l
	log time_trial_sequence_r
	log time_committed
	log avg_rt
	log response_time
	log reach_t0
	log reach_duration
	log response_time_target_mouse_response_l
	log response_time_target_mouse_response_r
	log beep_touchOffset

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence new_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sketchpad pause1
	set duration 500
	set description "Displays stimuli"

define sketchpad pause2_1
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=-900 y=0 z_index=0

define sketchpad pause2_l
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=900 y=0 z_index=0

define sketchpad pause2_l1
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=900 y=0 z_index=0

define sketchpad pause2_r
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=-900 y=0 z_index=0

define sketchpad pause2_r1
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=-900 y=0 z_index=0

define inline_script reach_duration_log
	set description "Executes Python code"
	___run__
	# reach duration variable for logging
	var.reach_duration = clock.time() - var.reach_t0
	__end__
	set _prepare ""

define repeat_cycle repeat
	set description "Optionally repeat a cycle from a loop"
	set condition always

define repeat_cycle repeat_1
	set description "Optionally repeat a cycle from a loop"
	set condition always

define repeat_cycle repeat_if_lifted
	set description "Optionally repeat a cycle from a loop"
	set condition "=not m.get_pressed()[0]"

define repeat_cycle repeat_if_short
	set description "Optionally repeat a cycle from a loop"
	set condition "=elapsed < 500"

define inline_script self_logger
	set description "Executes Python code"
	___run__
	#logging data into own script
	exp.set("subject_nr", var.subject_nr)
	__end__
	set _prepare ""

define sketchpad target_l
	set start_response_interval no
	set reset_variables no
	set duration 1000
	set description "Displays stimuli"

define mouse_response target_mouse_release_l
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad touch_pad_l
	set flush yes
	set event_type mouserelease
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response target_mouse_release_r
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad touch_pad_r
	set flush yes
	set event_type mouserelease
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response target_mouse_response_l
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad target_l
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response target_mouse_response_r
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad target_r
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define sketchpad target_r
	set start_response_interval no
	set reset_variables no
	set duration 1000
	set description "Displays stimuli"

define sketchpad touch_pad_l
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x=868 y=32 z_index=0
	draw fixdot color=white show_if=always style=default x=900 y=0 z_index=0

define sketchpad touch_pad_r
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x=-932 y=32 z_index=0
	draw fixdot color=white show_if=always style=default x=-900 y=0 z_index=0

define sequence trial_sequence_l
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blank always
	run fixation_l always
	run touch_pad_l always
	run experimentL_script always
	run target_l "=elapsed >= 500 and m.get_pressed()[0]"
	run beep "=elapsed >= 500 and m.get_pressed()[0]"
	run committed "=elapsed >= 500 and m.get_pressed()[0]"
	run target_mouse_response_l "=committed"
	run reach_duration_log always
	run pause2_l "=committed"
	run valid_trial "=committed"
	run invalid_trial_check_l "[correct] = 0"
	run logger "=committed"
	run repeat "=not committed"

define sequence trial_sequence_r
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blank always
	run fixation_r always
	run touch_pad_r always
	run experimentR_script always
	run target_r "=elapsed >= 500 and m.get_pressed()[0]"
	run beep "=elapsed >= 500 and m.get_pressed()[0]"
	run committed "=elapsed >= 500 and m.get_pressed()[0]"
	run pause2_r1 always
	run target_mouse_response_r "=committed"
	run reach_duration_log always
	run pause2_r "=committed"
	run valid_trial "=committed"
	run invalid_trial_check_r always
	run logger "=committed"
	run repeat "=not committed"

define keyboard_response valid_trial
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response y
	set allowed_responses "y;n"

define keyboard_response valid_trial_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response y
	set allowed_responses "y;n"

define inline_script valid_trial_check
	set description "Executes Python code"
	set _run ""
	set _prepare ""

