---
API: 2.1
OpenSesame: 3.2.8b1
Platform: posix
---
set width 1920
set uniform_coordinates yes
set title pointingTask_CLfree
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/experimenter/DMT-AD/DMT2019_tasks/reaching"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define synth beep
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define synth beep_1
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define synth beep_2
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define synth beep_2_1
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define sketchpad blank
	# code that means space can be used as esc key
	set duration 0
	set description "Displays stimuli"

define sketchpad blank_1
	# code that means space can be used as esc key
	set duration 0
	set description "Displays stimuli"

define sketchpad blank_2
	# code that means space can be used as esc key
	set duration 0
	set description "Displays stimuli"

define inline_script committed_1
	set description "Executes Python code"
	set _run "committed = True"
	set _prepare ""

define inline_script committed_2
	set description "Executes Python code"
	___run__
	committed = True
	
	#clocking the end of the beep
	var.beep_end = clock.time()
	
	#touch_release time
	wait_while_lmb_pressed(True,bounds=target_bounds)
	var.reach_t0 = clock.time() #reaching onset
	var.mouse_release = True 
	
	
	var.beep_touchOffset = var.reach_t0 - var.beep_end 
	__end__
	set _prepare ""

define inline_script counterbalance_prep1
	set description "Executes Python code"
	___run__
	# getting files prepped for the counterbalancing across hand dominance
	var.targets_file = "pointingTask_targets_radial7_{hand}.csv".format(hand=var.hand)
	if var.hand == 'left':
		var.fix_x = 900
		var.touch_x = 857
	elif var.hand == 'right':
		var.fix_x = -900
		var.touch_x = -943
	else:
		assert False, 'Unexpected value for var.hand'
		
	var.touch_y = var.pix_perDeg #hand touch pad size (half) - hand touchpad is 2deg
	var.touch_y_loc = 0
	__end__
	set _prepare ""

define inline_script counterbalance_prep2
	set description "Executes Python code"
	___run__
	# getting files prepped for the counterbalancing across hand dominance
	if var.handedness == 'Right':
		 var.targets_file = "pointingTask_targets_radial7_left.csv"
		 var.fix_x = 900
		 var.touch_x = 868
	if var.handedness == 'Left':
		 var.targets_file = "pointingTask_targets_radial7_right.csv"
		 var.fix_x = -900
		 var.touch_x = -932
	__end__
	set _prepare ""

define sketchpad end_block1
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=32 html=yes show_if=always text="</b>End of block, thank you</b><br /><br /><br />Please tell the experimenter to continue" x=0 y=0 z_index=0

define sketchpad end_block2
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=50 html=yes show_if=always text="Thank you for taking part in the experiment<br /><br />Please touch the screen to exit" x=0 y=0 z_index=0

define sketchpad end_experiment
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=50 html=yes show_if=always text="Thank you for taking part in this experiment<br /><br />Please touch the screen to exit" x=0 y=0 z_index=0

define loop even
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reaching_hand always
	run outside_loop always

define inline_script experimentR_script
	set description "Executes Python code"
	___run__
	# in case mouse is pressed when we get here
	wait_while_lmb_pressed(True)
	
	# wait for "mouse down" i.e. touch
	wait_while_lmb_pressed(False)
	
	t0 = clock.time()
	var.reach_t0 = clock.time()
	
	# hide target
	fixation_r.run()
	
	# wait for "mouse up"
	wait_while_lmb_pressed(True,timeout=500,bounds=target_bounds)
	
	elapsed = clock.time() - t0
	
	committed = False
	__end__
	___prepare__
	circle_string = 'draw circle x={} y={} r={} fill=1 color=white'.format(var.x,var.y, var.pix_perDeg)
	fix_dot_r = ' draw fixdot x=-900 y=0 color=white show_if=always style=default'
	stim_r.elements = [sketchpad_elements.circle(stim_r,circle_string), sketchpad_elements.fixdot(stim_r,fix_dot_r)]
	
	tr = touch_pad_r.elements[0].eval_properties()
	target_bounds = (tr['x'], tr['y'], tr['x']+tr['w'], tr['y']+tr['h'])
	__end__

define inline_script experiment_script
	set description "Executes Python code"
	___run__
	# in case mouse is pressed when we get here
	wait_while_lmb_pressed(True)
	
	# wait for "mouse down" i.e. touch
	wait_while_lmb_pressed(False,update_fn=get_update_function(False))
	
	t0 = clock.time()
	
	# wait for "mouse up"
	result = wait_while_lmb_pressed(
		True,
		timeout = var.target_onset,
		bounds=target_bounds,
		update_fn=get_update_function(True)
	)
	
	committed = False
	
	if result == TouchpadResult.TIMED_OUT:
	
		target_time = clock.time()
		var.sanity_check = target_time - t0
	
		#waiting for target presentation, maintain all the same
		result = wait_while_lmb_pressed(True, bounds=target_bounds,update_fn=get_update_function2(True))
	
		if result == TouchpadResult.LIFTED:
	
			#to record these need some kind of 'if mouse up' loop
			var.reach_t0 = clock.time() #reaching onset
			var.time_touch_offset = var.reach_t0 - target_time
	
			target_time = clock.time()
	
			elapsed = clock.time() - t0
			var.mouse_release = False
	
			#touch_response time
			wait_while_lmb_pressed(False, bounds=target_bounds, update_fn=get_update_function2(True))
			committed = True
			# reach duration variable for logging
			var.reach_duration = clock.time() - var.reach_t0
			#get mouse response location
			(x,y),time = m.get_pos()
			var.land_x = x
			var.land_y = y
	__end__
	___prepare__
	#circle_string = 'draw circle x={} y={} r={} fill=1 color=white'.format(var.x,var.y,var.targetSize_pix)
	#fix1_string = (
		#'draw line color=white penwidth=5 show_if=always x1="{x1}" x2="{x2}" y1=0 y2=0 z_index=0'.format(
			#x1=var.fix_x-15, x2=var.fix_x+15
		#)
	#)
	#fix2_string = 'draw line color=white penwidth=5 show_if=always x1={x} x2={x} y1=-15 y2=15 z_index=0'.format(
		#x=var.fix_x
	#)
	#stim.elements = [
		#sketchpad_elements.circle(stim,circle_string),
		#sketchpad_elements.line(stim,fix1_string),
		#sketchpad_elements.line(stim,fix2_string)
	#]
	
	# target onset times
	var.target_onset = random.choice(target_onset_values)
	
	target_bounds = (var.touch_x, var.touch_y_loc, var.touch_x+2*var.pix_perDeg, 129) #bounding box for target
	
	def get_update_function(pressed):
		def update_both(t,c):
			update_touchpad(t,c,pressed)
		return update_both
	
	def get_update_function2(pressed):
		def update_both2(t,c):
			update_target(t,c,pressed)
		return update_both2
	
	def update_fixation(t,c,pressed):
		if pressed:
			col = "white"
		else:
			col = "white"
		c_x, c_y = var.fix_x, 0
		c.line(c_x-fixWidth_pix/2,c_y,c_x+fixWidth_pix/2,c_y,color=col,penwidth=5)
		c.line(c_x,c_y-fixWidth_pix/2,c_x,c_y+fixWidth_pix/2,color=col,penwidth=5)
	
	#draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	
	
	def update_touchpad(t,c,pressed):
		if pressed:
			c.rect(x=var.touch_x, y=var.touch_y_loc, w=var.touch_y*2, h=var.touch_y*2, color="black", penwidth=5, fill=0)		
		else:
			c.rect(x=var.touch_x, y=var.touch_y_loc, w=var.touch_y*2, h=var.touch_y*2, color="white", penwidth=5, fill=0)
	
	def update_target(t,c,pressed):
		if pressed:
			c.circle(x=var.targ_x, y = var.targ_y, r=var.targetSize_pix, fill=True, color="white")
	
	
	#for later presentation of fixation
	var.fix_x1 = var.fix_x-fixWidth_pix/2
	var.fix_x2 = var.fix_x+fixWidth_pix/2
	var.fix_y1 = -fixWidth_pix/2
	var.fix_y2 = fixWidth_pix/2
	__end__

define inline_script experiment_script_1
	set description "Executes Python code"
	___run__
	# in case mouse is pressed when we get here
	wait_while_lmb_pressed(True)
	
	# wait for "mouse down" i.e. touch
	wait_while_lmb_pressed(False)
	
	t0 = clock.time()
	
	# hide target
	fixation.run()
	
	# wait for "mouse up"
	wait_while_lmb_pressed(True,timeout=1000,bounds=target_bounds)
	var.reach_t0 = clock.time() #reaching onset
	
	elapsed = clock.time() - t0
	var.mouse_release = False
	
	
	committed = False
	__end__
	___prepare__
	circle_string = 'draw circle x={} y={} r={} fill=1 color=white'.format(var.x,var.y,var.pix_perDeg)
	fix_dot = ' draw fixdot x={} y=0 color=white show_if=always style=default' .format(var.fix_x)
	stim.elements = [sketchpad_elements.circle(stim,circle_string), sketchpad_elements.fixdot(stim,fix_dot)]
	
	tr = touch_pad.elements[0].eval_properties()
	target_bounds = (tr['x'], tr['y'], tr['x']+tr['w'], tr['y']+tr['h'])
	__end__

define loop experiment_sequence
	set source_file "[targets_file]"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[valid_trial_count]=50"
	setcycle 0 empty_column ""
	run trial_sequence

define loop experiment_sequence1
	set source_file "[targets_file]"
	set source file
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define sketchpad fixation
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define sketchpad fixation_1
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define sketchpad fixation_r
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=-900 y=0 z_index=0

define inline_script global_prep
	set description "Executes Python code"
	set _run ""
	___prepare__
	# prepare steps that only need to happen once
	
	import csv
	from datetime import datetime
	from enum import Enum
	import os
	
	from libopensesame import sketchpad_elements
	from openexp.keyboard import keyboard
	
	# packages useful for generating random arrays and selecting from them
	# handing for varying target onset time
	import random
	from random import choice
	import numpy as np
	
	class TouchpadResult(Enum):
		OUT_OF_BOUNDS = 1
		LIFTED = 2
		TIMED_OUT = 3
	
	m = Mouse()
	myKeys = keyboard(exp, keylist=['space'])
	
	
	beep = items['beep']
	blank = items['blank']
	
	#response items
	stim, response = items['target'], items['target_mouse_response']
	fixation = items['fixation']
	touch_pad = items['touch_pad']
	
	def in_bounds(x,y,bounds):
		left, top, right, bottom = bounds
		return x > left and x < right and y > top and y < bottom
	
	def wait_while_lmb_pressed(pressed, timeout=None, bounds=None, update_fn=None):
	
		"""
		pressed == True : wait while mouse left button pressed,
		within bounds if present
		pressed == False : wait while mouse left button not pressed
		bounds as (left, top, right, bottom)
		"""
		t0 = clock.time()
		while m.get_pressed()[0] == pressed:
			if pressed and bounds:
				(x, y), time = m.get_pos()
				if not in_bounds(x, y, bounds):
					return TouchpadResult.OUT_OF_BOUNDS
			if update_fn is None:
				clock.sleep(1)
			else:
				c = Canvas()
				update_fn(clock.time()-t0,c)
				c.show()
			if timeout and clock.time() - t0 >= timeout:
				return TouchpadResult.TIMED_OUT
		return TouchpadResult.LIFTED
				
	
	# running info for degrees visual angle
	# getting information about degrees visual angle
	import math
	from math import atan2, degrees
	h = 17.5 #monitor height in cm
	w = 31
	d = 40 #distance between pp and monitor
	ry = 1080 #vertical resolution of monitor
	rx = 1920
	
	#deg_perPixY = degrees(atan2(.5*h, d))/(.5*ry)
	#deg_perPixX =  degrees(atan2(.5*w, d))/(.5*rx)
	#var.deg_perPix = (deg_perPixY + deg_perPixX)/2
	#var.pix_perDeg = 1/var.deg_perPix
	var.pix_perDeg = 43.1663 #taken from labview document
	var.deg_perPix = 1/var.pix_perDeg
	
	var.targetSize_pix = var.pix_perDeg #size of target in pixels
	var.targetSize_deg = var.targetSize_pix*var.deg_perPix #converting both fix target distance and size into deg
	
	#sizes in mm for reporting
	var.pix_permm = ((ry/(h*10))+(rx/(w*10))) /2
	var.mm_perPix = 1/var.pix_permm
	var.cm_perPix = var.mm_perPix/10
	var.targetSize_mm = var.mm_perPix * var.targetSize_pix
	
	# fixation cross width (1 deg)
	fixWidth_pix = var.pix_perDeg
	
	# recording log file specfic to experiment
	subject_nr_string = str(var.subject_nr)
	date_str = datetime.now().isoformat()[:-7]
	data_path = u'/home/experimenter/DMT-AD/DMT2019_rawdata/practiceTrials'
	data_string = u'subject{sub}_{title}_{hand}_{date}.csv'
	#individual subject path
	data_dir = os.path.join(data_path,subject_nr_string)
	if not os.path.exists(data_dir):
			os.makedirs(data_dir)
	data_outpath = os.path.join(data_dir, data_string)
	datafile = log.open(data_outpath.format(sub=subject_nr_string, date=date_str, title=var.title, hand=var.hand))
	# target onset time array
	target_onset_values = list(np.arange(250,850,100))
	# target onset time array
	target_onset_values = list(np.arange(250,850,100))
	
	#manual trial counter for limiting experiment to max 50 trials
	var.valid_trial_count = 0
	__end__

define form_multiple_choice handedness_form
	set timeout infinite
	set spacing 10
	set question "Dominant hand?"
	__options__
	Left
	Right
	__end__
	set margins "100;100;100;100"
	set form_var handedness
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sketchpad intro
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=38 html=yes show_if=always text="Reaching task - free-view<br /><br />Please touch the target as soon as you see it<br /><br /><br />When you are ready, touch the screen to continue" x=0 y=0 z_index=0

define inline_script invalid_trial_check
	set description "Executes Python code"
	___run__
	#key press to indicate valid/invalid trial
	if self.get('response')=='e': #eye move trial
		var.eye_move = 1
		var.void_trial = 0
		var.valid_trial_count = var.valid_trial_count+1
	elif self.get('response')=='v': #voided trial (e.g. pp got distracted)
		var.void_trial = 1
		var.eye_move = 1
	elif self.get('response')=='y': #valid trial
		var.eye_move = 0
		var.void_trial = 0
		var.valid_trial_count = var.valid_trial_count+1
	__end__
	set _prepare ""

define inline_script invalid_trial_check_1
	set description "Executes Python code"
	___run__
	#key press to indicate valid/invalid trial
	if self.get('correct')==0:
		var.eye_move = 1
		# prepare trail sequence again
		exp.items['trial_sequence'].prepare()
		# re-run trial sequence
		exp.items['trial_sequence'].run()
	
	#logging eye-move yes=1 no=0
	if self.get('correct')==1:
		var.eye_move = 0
	__end__
	set _prepare ""

define inline_script invalid_trial_check_l_1
	set description "Executes Python code"
	___run__
	#key press to indicate valid/invalid trial
	if self.get('correct')==0:
		var.eye_move = 1
		# prepare trail sequence again
		exp.items['trial_sequence'].prepare()
		# re-run trial sequence
		exp.items['trial_sequence'].run()
	
	#logging eye-move yes=1 no=0
	if self.get('correct')==1:
		var.eye_move = 0
	__end__
	set _prepare ""

define inline_script invalid_trial_check_r
	set description "Executes Python code"
	___run__
	#key press to indicate valid/invalid trial
	if self.get('correct')==0:
		var.eye_move = 1
		# prepare trail sequence again
		exp.items['trial_sequence_r'].prepare()
		# re-run trial sequence
		exp.items['trial_sequence_r'].run()
	
	#logging eye-move yes=1 no=0
	if self.get('correct')==1:
		var.eye_move = 0
	__end__
	set _prepare ""

define sequence left
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run global_prep always
	run intro always
	run counterbalance_prep1 always
	run experiment_sequence always
	run end_block1 always

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log avg_rt
	log datetime
	log fix_x
	log eye_move
	log reach_duration
	log subject_nr
	log targets_file
	log time_touch_offset
	log touch_x
	log target_onset
	log land_x
	log land_y
	log targ_x
	log targ_y
	log void_trial
	log valid_trial_count

define logger logger_1
	set description "Logs experimental data"
	set auto_log yes

define inline_script new_inline_script
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence new_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[handedness]" x=0 y=0 z_index=0

define loop outside_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run outside_sequence

define sequence outside_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run left always

define sketchpad pause1
	set duration 500
	set description "Displays stimuli"

define sketchpad pause2
	set duration 200
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define sketchpad pause2_1
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=-900 y=0 z_index=0

define sketchpad pause2_2
	set duration 200
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define sketchpad pause2_l1
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=900 y=0 z_index=0

define sketchpad pause2_r
	set duration 200
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=-900 y=0 z_index=0

define sketchpad pause2_r1
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=-900 y=0 z_index=0

define sketchpad pause3
	set duration 200
	set description "Displays stimuli"

define inline_script reach_duration_log
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define inline_script reach_duration_log_1
	set description "Executes Python code"
	___run__
	# reach duration variable for logging
	var.reach_duration = clock.time() - var.reach_t0
	__end__
	set _prepare ""

define form_multiple_choice reaching_hand
	set timeout infinite
	set spacing 10
	set question "Hand used for reaching?"
	__options__
	left
	right
	__end__
	set margins "50;50;50;50"
	set form_var hand
	set form_title "Reaching Hand"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define repeat_cycle repeat
	set description "Optionally repeat a cycle from a loop"
	set condition always

define repeat_cycle repeat_1
	set description "Optionally repeat a cycle from a loop"
	set condition always

define repeat_cycle repeat_2
	set description "Optionally repeat a cycle from a loop"
	set condition always

define inline_script repeat_eyemove
	set description "Executes Python code"
	___run__
	if self.get('response') == 'e':
			# prepare trail sequence again
		exp.items['trial_sequence'].prepare()
		# re-run trial sequence
		exp.items['trial_sequence'].run()
	__end__
	set _prepare ""

define repeat_cycle repeat_if_lifted
	set description "Optionally repeat a cycle from a loop"
	set condition "=not m.get_pressed()[0]"

define repeat_cycle repeat_if_short
	set description "Optionally repeat a cycle from a loop"
	set condition "=elapsed < 500"

define inline_script saving_log_file
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define inline_script self_logger
	set description "Executes Python code"
	___run__
	#logging data into own script
	exp.set("subject_nr", var.subject_nr)
	__end__
	set _prepare ""

define loop sequence2
	set source_file "pointingTask_targets_radial7_right.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 x 154.05
	setcycle 0 y 0
	setcycle 1 x 154.05
	setcycle 1 y 128
	setcycle 2 x 154.05
	setcycle 2 y -128
	setcycle 3 x 452.15
	setcycle 3 y 0
	setcycle 4 x 452.15
	setcycle 4 y 128
	setcycle 5 x 452.15
	setcycle 5 y -128
	setcycle 6 x 750.25
	setcycle 6 y 0
	setcycle 7 x 750.25
	setcycle 7 y 128
	setcycle 8 x 750.25
	setcycle 8 y -128
	run ""

define sequence side_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run counterbalance_prep2 always
	run experiment_sequence1 always

define sketchpad target
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"

define sketchpad target_1
	set start_response_interval no
	set reset_variables no
	set duration 1000
	set description "Displays stimuli"

define mouse_response target_mouse_release_l
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad touch_pad
	set flush yes
	set event_type mouserelease
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response target_mouse_release_r
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad touch_pad_r
	set flush yes
	set event_type mouserelease
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response target_mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response target_mouse_response_1
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad target_1
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response target_mouse_response_r
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad target_r
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define sketchpad target_r
	set start_response_interval no
	set reset_variables no
	set duration 1000
	set description "Displays stimuli"

define sketchpad touch_pad
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define sketchpad touch_pad_1
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define sketchpad touch_pad_r
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x=-932 y=32 z_index=0
	draw fixdot color=white show_if=always style=default x=-900 y=0 z_index=0

define inline_script touch_response_code
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blank always
	run experiment_script always
	run beep "=committed "
	run pause3 always
	run valid_trial "=committed "
	run invalid_trial_check "=committed "
	run logger "=committed"
	run repeat_eyemove always
	run repeat "=not committed"

define sequence trial_sequence2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blank always
	run fixation_r always
	run touch_pad_r always
	run experimentR_script always
	run target_r "=elapsed >= 500 and m.get_pressed()[0]"
	run beep "=elapsed >= 500 and m.get_pressed()[0]"
	run touch_response_code "=elapsed >= 500 and m.get_pressed()[0]"
	run target_mouse_response_r "=committed"
	run reach_duration_log always
	run pause2_r "=committed"
	run valid_trial "=committed"
	run invalid_trial_check_r always
	run logger "=committed"
	run repeat "=not committed"

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blank_2 always
	run fixation_1 always
	run touch_pad_1 always
	run experiment_script_1 always
	run target_1 "=elapsed >= 500 and m.get_pressed()[0]"
	run beep_2 "=elapsed >= 500 and m.get_pressed()[0]"
	run committed_2 "=elapsed >= 500 and m.get_pressed()[0]"
	run pause2_2 "[mouse_release] = yes"
	run target_mouse_response_1 "=committed"
	run reach_duration_log_1 always
	run valid_trial_2 "=committed"
	run invalid_trial_check_l_1 "[correct] = 0"
	run logger_1 "=committed"
	run repeat_2 "=not committed"

define keyboard_response valid_trial
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response y
	set allowed_responses "y;e;v"

define keyboard_response valid_trial_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response y
	set allowed_responses "y;n"

define keyboard_response valid_trial_2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response y
	set allowed_responses "y;n"

define inline_script valid_trial_check
	set description "Executes Python code"
	set _run ""
	set _prepare ""

