---
API: 2.1
OpenSesame: 3.2.7b1
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start outer
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/experimenter/git/DMT2019"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define inline_script apply_settings
	set description "Executes Python code"
	___run__
	webcam_path = "/dev/video{}".format(camera_number)
	set_string = ",".join(
		param_name+"="+param_value
		for param_name, param_value in cam_settings.items()
	)
	cmd_fmt = "v4l2-ctl -d {device} --set-ctrl {params}".format(
		device=webcam_path,
		params=set_string
	)
	sys.stderr.write(cmd_fmt+"\n")
	subprocess.call(cmd_fmt, shell=True)
	__end__
	___prepare__
	import socket
	import subprocess
	__end__

define inline_script clean_up
	set description "Executes Python code"
	___run__
	
	def cleanup():
		if process is not None:
			sys.stderr.write("terminating {}\n".format(process.pid))
			process.terminate()
			clock.sleep(500)
			if process.poll() is None:
				sys.stderr.write("killing {}\n".format(process.pid))
				process.kill()
		else:
			sys.stderr.write("no process!\n")
			
	register_cleanup_function(cleanup)
	__end__
	set _prepare ""

define loop do_experiment
	set source_file ""
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run experiment

define loop do_test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run test

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run wait always
	run take_a_picture always
	run iti always
	run iti_1 always
	run iti_2 always

define notepad eye_detection_license
	__note__
	This is the license for the file "haarcascade_eye.xml"
	
	IMPORTANT: READ BEFORE DOWNLOADING, COPYING, INSTALLING OR USING.
	
	By downloading, copying, installing or using the software you agree to this license.
	If you do not agree to this license, do not download, install, copy or use the software.
	
	
	                        Intel License Agreement
	                For Open Source Computer Vision Library
	
	Copyright (C) 2000, Intel Corporation, all rights reserved.
	Third party copyrights are property of their respective owners.
	
	Redistribution and use in source and binary forms, with or without modification, are permitted provided that the following conditions are met:
	
	   * Redistribution's of source code must retain the above copyright notice, this list of conditions and the following disclaimer.
	
	   * Redistribution's in binary form must reproduce the above copyright notice, this list of conditions and the following disclaimer in the documentation and/or other materials provided with the distribution.
	
	   * The name of Intel Corporation may not be used to endorse or promote products derived from this software without specific prior written permission.
	
	This software is provided by the copyright holders and contributors "as is" and any express or implied warranties, including, but not limited to, the implied warranties of merchantability and fitness for a particular purpose are disclaimed.
	
	In no event shall the Intel Corporation or contributors be liable for any direct, indirect, incidental, special, exemplary, or consequential damages (including, but not limited to, procurement of substitute goods or services;
	 loss of use, data, or profits; or business interruption) however caused and on any theory of liability, whether in contract, strict liability, or tort (including negligence or otherwise) arising in any way out of the use of this software, even if advised of the possibility of such damage.
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define notepad in_case_experiment_hangs
	__note__
	If the experiment appears to start but won't go past the first instruction
	screen, this is possibly due to an old zombie OpenSesame run holding on
	to the webcam.
	
	Close OpenSesame, go to the terminal, and type
	
	killall opensesame
	
	If this doesn't work, you can try
	
	killall -9 opensesame
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad iti
	set duration 83
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text=1 x=0 y=0 z_index=0

define sketchpad iti_1
	set duration 83
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text=2 x=0 y=0 z_index=0

define sketchpad iti_2
	set duration 83
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=80 html=yes show_if=always text=3 x=0 y=0 z_index=0

define sequence outer
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run in_case_experiment_hangs always
	run eye_detection_license always
	run settings always
	run webcam_select never
	run apply_settings always
	run photographer_create always
	run clean_up always
	run do_test always
	run do_experiment always
	run save_images always

define sketchpad pause_before_test_picture
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Press any key to take a test picture.<br />This will be deleted after you view it." x=0 y=0 z_index=0

define inline_script photographer_create
	set description "Executes Python code"
	___run__
	port = port_base+random.randrange(0,1000)
	
	# create photographer
	cmd = [
		"python",
		os.path.join(var.experiment_path, "photographer.py"),
		str(camera_number),
		str(cam_resolution[0]),
		str(cam_resolution[1]),
		str(port)
	]
	print(cmd)
	process = subprocess.Popen(cmd)
	
	# server creates socket first before we start!
	clock.sleep(1000)
	
	client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
	client_socket.connect(("localhost", port))
	__end__
	___prepare__
	import random
	import socket
	import sys
	import os
	__end__

define sketchpad please_wait
	set duration 5000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Please wait." x=0 y=0 z_index=0

define inline_script save_images
	set description "Executes Python code"
	___run__
	
	for filename in images_to_save:
		if not os.path.exists(filename):
			sys.stderr.write("couldn't find "+filename+"\n")
			continue
		im = cv2.imread(filename)
		grey = cv2.cvtColor(im, cv2.COLOR_BGR2GRAY)
		eyepos, _, weights = eye_cascade.detectMultiScale3(
			grey,
			outputRejectLevels=True
		)
		weights = list(weights)
		eyes_with_weights = zip(eyepos, weights)
		# filter for size
		def size_ok(epos):
			x, y, w, h = epos
			return (
				(eye_smallest_px <= w <= eye_largest_px)
				and	(eye_smallest_px <= h <= eye_largest_px)
			)
		eyes_filtered = [
			(epos, wgt) for epos, wgt in eyes_with_weights
			if size_ok(epos)
		]
		sorted_eyes = sorted(
			eyes_filtered,
			key=lambda x: x[1],
			reverse=True
		)	
		eyes = sorted_eyes[:2] # take best two
		for idx, (eyepos, weight) in enumerate(eyes):
			x, y, w, h = eyepos
			eye = im[y:y+h,x:x+w]
			cv2.imwrite("{}_eye{}.png".format(filename[:-4], idx), eye)
			cv2.rectangle(im, (x, y), (x+w, y+h), (255, 0, 0), 2)
		if keep_face_image:
			cv2.imwrite("{}".format(filename), im)
		else:
			os.unlink(filename)
	__end__
	___prepare__
	eye_cascade = cv2.CascadeClassifier(
		os.path.join(var.experiment_path,'haarcascade_eye.xml')
	)
	__end__

define inline_script settings
	set description "Executes Python code"
	set _run ""
	___prepare__
	# these will be applied after the camera is selected
	cam_settings = {
		"white_balance_temperature_auto": "0", # off
	    "power_line_frequency": "2", # 60Hz
	    "exposure_auto": "0", # off
		"exposure_absolute": "150",
		"saturation": "0" # greyscale
	}
	cam_resolution = (1280,960)
	camera_number = 1
	port_base = 50000
	eye_smallest_px = 80
	eye_largest_px = 160
	keep_face_image = True # False for testing!
	__end__

define inline_script show_test_picture_and_delete
	set description "Executes Python code"
	___run__
	
	c = Canvas()
	image_scale = 0.6*float(c.height)/float(cam_resolution[1])
	
	c.image(test_pic,scale=image_scale)
	c.show()
	
	k = Keyboard()
	k.get_key()
	
	os.unlink(test_pic)
	__end__
	set _prepare ""

define inline_script take_a_picture
	set description "Executes Python code"
	___run__
	filename = "grab_{}.png".format(var.count_take_a_picture+1)
	
	t0 = clock.time()
	image_path = os.path.join(var.experiment_path, filename)
	sys.stderr.write(image_path+"\n")
	client_socket.send(codecs.encode(image_path,'utf8'))
	sys.stderr.write("read took {}\n".format(clock.time()-t0))
	
	images_to_save.append(image_path)
	__end__
	set _prepare "import codecs"

define sequence test
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pause_before_test_picture always
	run test_picture always
	run please_wait always
	run show_test_picture_and_delete always

define inline_script test_picture
	set description "Executes Python code"
	___run__
	test_pic = os.path.join(var.experiment_path,"test.png")
	
	t0 = clock.time()
	sys.stderr.write(test_pic+"\n")
	client_socket.send(codecs.encode(test_pic,'utf8'))
	sys.stderr.write("read took {}\n".format(clock.time()-t0))
	__end__
	set _prepare "import codecs"

define sketchpad wait
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Press a key to take a photo [count_experiment]" x=0 y=0 z_index=0

define inline_script webcam_select
	set description "Executes Python code"
	___run__
	n_cams = 4
	assert n_cams < 10
	caps = []
	grabs = []
	sizes = []
	temp_image = "tmp{}.jpg"
	selected = None
	
	c = Canvas()
	w, h = c.size
	k = Keyboard()
	
	for cam_idx in range(n_cams):
		capture = VCTimeThread(cam_idx)
		#capture = cv2.VideoCapture(cam_idx)
		got_image = True
		if capture and capture.isOpened():
			ok, im = capture.read()
			if ok:
				filename = temp_image.format(cam_idx)
				cv2.imwrite(filename,im)
				size = im.shape
			else:
				got_image = False
		else:
			got_image = False
		if not got_image:
			filename, size = None, None
	
		grabs.append(filename)
		caps.append(capture)
		sizes.append(size)
	
	process = None
	
	# work out grid positions
	n_rows = int(math.floor(math.sqrt(n_cams)))
	n_cols, remainder = divmod(n_cams, n_rows)
	grid_pos = []
	h_spacing, v_spacing = w/n_cols, h/n_rows
	for row in range(n_rows):
		row_y = -h//2+v_spacing//2+v_spacing*row
		for col in range(n_cols):
			col_x = -w//2+h_spacing//2+h_spacing*col
			grid_pos.append((col_x, row_y))
	
	# draw images
	for idx, grab in enumerate(grabs):
		x, y = grid_pos[idx]
		if grab is None:
			error = "Couldn't open camera {}".format(idx)
			c.text(error, center=True, x=x, y=y)
		else:
			scale = 0.6*float(h_spacing)/float(sizes[idx][0])
			print(scale)
			c.image(grab, center=True, x=x, y=y, scale=scale)
			c.text(
				"Camera {}".format(idx),
				center=False,
				x=x-h_spacing//2+10,
				y=y-v_spacing//2+10
			)
	
	c.show()
	
	keys = [str(n) for n in range(n_cams)]
	key, time = k.get_key(keylist=keys)
	
	camera_number = int(key)
	capture = caps.pop(camera_number)
	for c in caps:
			del c # each capture is a thread, remove ones we're not using
	
	[os.unlink(g) for g in grabs if g is not None]
	__end__
	___prepare__
	import math
	import os
	import os.path
	from queue import Queue, Empty
	import sys
	import threading
	import traceback
	
	import cv2
	
	images_to_save = []
	
	class VCTimeThread:
		"""
		Take the last frame that didn't exhaust the buffer, or if none, wait for
		a frame
		"""
		def __init__(self, cam_id):
			self.cap = cv2.VideoCapture(cam_id)
			self.max_exhaust = 10 # prevent infinite loop
			self.time_threshold_ms = 10
			self.current_ok = False
			self.current_image = None
		
		def set(self, *args, **kwargs):
			return self.cap.set(*args, **kwargs)
	
		def isOpened(self):
			return self.cap.isOpened()
	
		def read_image(self):
			self.current_ok, self.current_image = self.cap.read()
	
		def read(self):
			last = None
			for idx in range(self.max_exhaust):
				sys.stderr.write("attempt {}\n".format(idx))
				t = threading.Thread(target=self.read_image)
				t.start()
				t.join(self.time_threshold_ms*0.001)
				if t.is_alive():
					# still running
					if last is None:
						# no last frame, wait for this one
						sys.stderr.write("waited for frame!\n")
						t.join()
						return self.current_ok, self.current_image
					else:
						sys.stderr.write("returning last!\n")
						return last is not None, last
				else:
					# completed
					if self.current_ok:
						last = self.current_image
					else:
						last = None
			sys.stderr.write("default out!\n")
			return False, None
	
	class VCExhaustBuffer:
		"""
		Exhaust the buffer every time, take the frame that takes longer than
		a time limit
		"""
		def __init__(self, cam_id):
			self.cap = cv2.VideoCapture(cam_id)
			self.max_exhaust = 10 # prevent infinite loop
			self.time_threshold_ms = 10
			
		def set(self, *args, **kwargs):
			return self.cap.set(*args, **kwargs)
	
		def isOpened(self):
			return self.cap.isOpened()
	
		def read(self):
			# take last in buffer
			last = None
			for idx in range(self.max_exhaust):
				sys.stderr.write("attempt {}".format(idx))
				t0 = clock.time()
				ok, im = self.cap.read()
				if not ok:
					sys.stderr.write("not ok!\n")
					return False, None
				else:
					if clock.time()-t0 > self.time_threshold_ms:
						sys.stderr.write("time!\n")
						return ok, im
				sys.stderr.write("attempt {:.2f}\n".format(clock.time()-t0))
				last = im
			sys.stderr.write("last!\n")
			return bool(last), last
				
	
	class VCNoBuffer:
		def __init__(self, cam_id):
			self.cap = cv2.VideoCapture(cam_id)
			self.q = Queue()
			self.t = threading.Thread(target=self.read_images)
			self.t.daemon = True
			self.t.start()
	
		def set(self, *args, **kwargs):
			return self.cap.set(*args, **kwargs)
	
		def isOpened(self):
			return self.cap.isOpened()
	
		def read_images(self):
			try:
				while True:
					#sys.stderr.write("start read\n")
					try:
						ok, im = self.cap.read()
					except:
						# OpenCV is sometimes unhappy, wait a bit and try again
						clock.sleep(1)
						sys.stderr.write("X")
						continue
					#sys.stderr.write("end read\n")
					if not ok:
						continue
					if not self.q.empty():
						try:
							self.q.get_nowait()	 # discard previous (unprocessed) frame
						except Empty:
							pass
					#sys.stderr.write("adding to queue\n")
					self.q.put(im)
			except:
				sys.stderr.write("Thread troubles!")
				traceback.print_exc(file=sys.stderr)
				
		def read(self):
			if self.cap.isOpened():
				sys.stderr.write("start queue get\n")
				sys.stderr.write("thread is alive: {}\n".format(self.t.is_alive()))
				im = self.q.get()
				sys.stderr.write("end queue get\n")
				return True, im
			else:
				return False, None
	__end__

