---
API: 2.1
OpenSesame: 3.2.8b1
Platform: posix
---
set width 1920
set uniform_coordinates no
set transparent_variables no
set title "TVA-wholereport"
set synth_backend legacy
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground red
set font_underline no
set font_size 45
set font_italic no
set font_family sans
set font_bold no
set experiment_path "/home/experimenter/git/DMT2019/visualAttentionTask"
set disable_garbage_collection yes
set description "Default description"
set coordinates relative
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background black

define inline_script Adjust_monitor
	set description "Executes Python code"
	___run__
	#you only need to insert the four parameters (see below) 
	# + dont forget to set the resolution in the upper most item on the in the item overview on the left (name: TVA test)
	# the first three settings can simply be adjusted to your experimental settings
	# use the sample experiment in the calibration folder to adjust letter size and insert it below
	
	##insert your parameters here
	screen_width = 31 ## cm width of your screen
	resolution_width = 1920 ## pixel width of your screen
	screen_distance = 40 ## how far from the screen will participants be seated
	letter_size = 120 ## must correspond to a visual angle of 2.7; calibrate in the sample experiment
	screen_refresh = 16.7 #timing depends on screen refresh rate
	ecc1 = 6 #eccentricity in degrees
	ecc2 = 9 
	
	# from here: the positioning of the stimuli on the screen is determined
	import math
	
	# define tangez function so that seating distance can be related to stimuli size
	def tan(x):
	    tangenz = math.tan((math.pi/180)*x)
	    return tangenz
	__end__
	set _prepare ""

define text_display BlankScreen_100ms
	set maxchar 50
	set foreground white
	set font_size 24
	set font_family mono
	set duration 95
	set description "Presents a display consisting of text"
	set content ""
	set background black
	set align center

define inline_script Block_1
	set description "Executes Python code"
	set _run ""
	___prepare__
	#this script is only here so that in the practice block, the variable 'Block' is set to 0
	
	Block = 1
	exp.set('Block', Block)
	__end__

define loop Block_2_to_14
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set item StartScreen_and_Trials
	set description "Repeatedly runs another item"
	set cycles 13
	set continuous no
	set column_order Block
	set break_if_on_first yes
	set break_if never
	setcycle 0 Block 2
	setcycle 1 Block 3
	setcycle 2 Block 4
	setcycle 3 Block 5
	setcycle 4 Block 6
	setcycle 5 Block 7
	setcycle 6 Block 8
	setcycle 7 Block 9
	setcycle 8 Block 10
	setcycle 9 Block 11
	setcycle 10 Block 12
	setcycle 11 Block 13
	setcycle 12 Block 14
	run StartScreen_and_Trials

define inline_script Block_plus1
	set description "Executes Python code"
	set _run ""
	___prepare__
	#this script is only here so that in the practice block, the variable 'Block' is set to 0
	
	Block = Block+1
	exp.set('Block', Block)
	__end__

define sketchpad Fixation
	set duration 995
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size=68 html=yes show_if=always text="+" x=0 y=0 z_index=0

define inline_script Instructions
	set description "Executes Python code"
	___run__
	# Import the widgets library
	from libopensesame import widgets
	
	# Create a form
	form = widgets.form(self.experiment, cols=[1], rows=[1],
		margins=(50,100,50,100), spacing=0)
	
	
	# Create and place widget
	text = widgets.label(form, text='<span size="18", color="white", style="mono">Thank you for participating in this study.<br /><br /> \
	\
	In the following experiment, a red cross will be displayed in the center of the screen. Please fix your gaze on this red cross during the experiment. Shortly after the cross is displayed, either <i>two</i> or <i>six</i> <span color="red">red letters</span> will appear on an invisible circle surrounding the cross. In some trials, in which only two red letters are shown, four <span color="blue">blue letters</span> will be displayed simultaneously. All letters will be visible for a short amount of time only.<br /><br /> \
	\
	Your task will be to pay attention to the <span color="red">red letters</span>. After the presentation, please report which red letters you saw. Report only those letters of which you are fairly certain that they were presented. Please make sure that 80-90% of the letters you report are correct.<br /><br /> \
	\
	Following every block, you will receive feedback about the accuracy of your answers that is how many of the reported letters were indeed presented.<br /><br /> \
	\
	Altogether the experiment consists of 13 blocks lasting 3 minutes each. The first block is a practice block to familiarize yourself with the task. After each block you will be able to take a brief break. The entire experiment will last about 40 Minutes.<br /><br /> \
	\
	If you have any questions, please contact the examiner now.<br /><br /><br /><br /> \
	\
	<span size="30">Press the SPACEBAR to start the practice block.</span>', center=False)
	form.set_widget(text, (0,0))
	
	form.render()
	__end__
	___prepare__
	#set feedback variables
	count_responses = 0 #how many answers are given
	count_correct = 0 #how many answers are correct
	
	
	exp.set('count_correct', count_correct)
	exp.set('count_responses', count_responses)
	
	from datetime import datetime 
	
	global start_time 
	start_time = datetime.now() # use to keep track of the time since experiment has started
	# make this variable global since OpenSesame exp.set only works for simple variable types
	print start_time
	
	exp.set('start_time', start_time)
	
	end = 0 # used to show end message for experiment
	exp.set('end', end)
	__end__

define form_text_input Letter_Reproduction
	# widget 0 0 1 1 label text="[form_title]"
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "200;400;200;400"
	set form_var response
	set form_title Reproduction
	set form_question "Which letters did you see?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define inline_script Letter_generation
	set description "Executes Python code"
	set _run ""
	___prepare__
	###the 6 letters that are presented on the screen are created here
	
	#Import random number generator
	import random
	random.seed()
	
	letter_list=[]
	
	#if self.get('Condition') != 2:
		#take 4 numbers out of 20 without replacement
	n1 = random.randint(1,20)
	letter_list.append(n1)
	n2 = random.randint(1,20)
	while n2 == n1:
		n2 = random.randint(1,20)
	letter_list.append(n2)	
	n3 = random.randint(1,20)
	while n3 == n2 or n3 == n1:
		n3 = random.randint(1,20)	
	letter_list.append(n3)	
	n4 = random.randint(1,20)
	while n4 == n3 or n4 == n2 or n4 == n1:
		n4 = random.randint(1,20)
	letter_list.append(n4)
	
	
	#create list that will contain the actual letters that are presented
	letters = []
	
	for i in letter_list:
		
		if i == 0:
			letters.append('0')
		elif i == 1:
			letters.append('A') # append letters to list
		elif i == 2:
			letters.append('B')
		elif i == 3:
			letters.append('D')
		elif i == 4:
			letters.append('E')
		elif i == 5:
			letters.append('F')
		elif i == 6:
			letters.append('G')
		elif i == 7:
			letters.append('H')
		elif i == 8:
			letters.append('J')
		elif i == 9:
			letters.append('K')
		elif i == 10:
			letters.append('L')
		elif i == 11:
			letters.append('M')
		elif i == 12:
			letters.append('N')
		elif i == 13:
			letters.append('O')
		elif i == 14:
			letters.append('P')
		elif i == 15:
			letters.append('R')
		elif i == 16:
			letters.append('S')
		elif i == 17:
			letters.append('T')
		elif i == 18:
			letters.append('V')
		elif i == 19:
			letters.append('X')
		elif i == 20:
			letters.append('Z')
	
	#each letter must be in one variable to be presented; lists do not work
	L1 = letters[0]
	L2 = letters[1]
	L3 = letters[2]
	L4 = letters[3]
	
	exp.set('L1', L1)
	exp.set('L2', L2)
	exp.set('L3', L3)
	exp.set('L4', L4)
	
	# import coordinates and randomize them
	
	#coordinates for the presentation
	
	#c1 = -self.get('Y_at_ZeroX'), 0
	c1 = -self.get('Y_and_X'), -self.get('Y_and_X')
	c2 = self.get('Y_and_X'), -self.get('Y_and_X')
	#c2 = self.get('Y_at_ZeroX'), 0
	c3 = self.get('Y_and_X'), self.get('Y_and_X')
	c4 = -self.get('Y_and_X'), self.get('Y_and_X')
	
	coordinates = [c1, c2, c3, c4]
	
	random.shuffle(coordinates)
	
	c1 = coordinates[0]
	c2 = coordinates[1]
	c3 = coordinates[2]
	c4 = coordinates[3]
	#c5 = coordinates[4]
	#c6 = coordinates[5]
	
	
	p1 = c1[0]
	p2 = c1[1]
	p3 = c2[0]
	p4 = c2[1]
	p5 = c3[0]
	p6 = c3[1]
	p7 = c4[0]
	p8 = c4[1]
	#p9 = c5[0]
	#p10 = c5[1]
	#p11 = c6[0]
	#p12 = c6[1]
	
	
	exp.set('p1', p1)
	exp.set('p2', p2)
	exp.set('p3', p3)
	exp.set('p4', p4)
	exp.set('p5', p5)
	exp.set('p6', p6)
	exp.set('p7', p7)
	exp.set('p8', p8)
	#exp.set('p9', p9)
	#exp.set('p10', p10)
	#exp.set('p11', p11)
	#exp.set('p12', p12)
	
	
	#save position of the letters
	cor_list = []
	
	for i in coordinates:
		if i == (-self.get('Y_at_ZeroX'), 0):
			cor_list.append('left')
		elif i == (-self.get('Y_and_X'), -self.get('Y_and_X')):
			cor_list.append('top left')
		elif i == (self.get('Y_and_X'), -self.get('Y_and_X')):
			cor_list.append('top right')
		elif i == (self.get('Y_at_ZeroX'), 0):
			cor_list.append('right')
		elif i == (self.get('Y_and_X'), self.get('Y_and_X')):
			cor_list.append('bot right')
		elif i == (-self.get('Y_and_X'), self.get('Y_and_X')):
			cor_list.append('bot left')
	
	
	posLet1 = cor_list[0]
	posLet2 = cor_list[1]
	posLet3 = cor_list[2]
	posLet4 = cor_list[3]
	#posLet5 = cor_list[4]
	#posLet6 = cor_list[5]
	
	exp.set('posLet1', posLet1)
	exp.set('posLet2', posLet2)
	exp.set('posLet3', posLet3)
	exp.set('posLet4', posLet4)
	#exp.set('posLet5', posLet5)
	#exp.set('posLet6', posLet6)
	
	#individual timings
	# based on perceptual threshold caluclated in the thresholding session run before this
	if var.perceptual_threshold is not None:
		if var.perceptual_threshold < 100.3:
			var.timing2 = var.perceptual_threshold+screen_refresh
			var.timing3 = var.perceptual_threshold+screen_refresh*2
			var.timing4 = var.perceptual_threshold+screen_refresh*5
			var.timing5 = var.timing3+screen_refresh*9
		else:
			var.timing2 = var.perceptual_threshold+screen_refresh*2
			var.timing3 = var.perceptual_threshold+screen_refresh*4
			var.timing4 = var.perceptual_threshold+screen_refresh*7
			var.timing5 = var.timing3+screen_refresh*9
	else:
		print("Error: variable perceptual_threshold not defined")
	
	# defining letter durations
	# need to do this for each loop iteration
	if var.Timing == 1:
		var.Letter_duration = var.perceptual_threshold
	elif var.Timing == 2:	
		var.Letter_duration = var.timing2
	elif var.Timing == 3:
		var.Letter_duration = var.timing3
	elif var.Timing == 4:
		var.Letter_duration = var.timing4
	elif var.Timing == 5:
		var.Letter_duration = var.timing5
	elif var.Timing == 6:
		var.Letter_duration = var.perceptual_threshold
	elif var.Timing == 7:
		var.Letter_duration = var.timing5
	__end__

define loop Loop_experimental_Trials
	set source_file "task_conditions_60hz_eccentricities.csv"
	set source file
	set repeat 1
	set order random
	set item Sequence_experimental_trials
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set column_order "Condition;Letter_duration"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Letter_duration 5
	setcycle 0 Condition 1
	setcycle 1 Letter_duration 15
	setcycle 1 Condition 1
	setcycle 2 Letter_duration 45
	setcycle 2 Condition 1
	setcycle 3 Letter_duration 75
	setcycle 3 Condition 1
	setcycle 4 Letter_duration 135
	setcycle 4 Condition 1
	setcycle 5 Letter_duration 195
	setcycle 5 Condition 1
	setcycle 6 Letter_duration 5
	setcycle 6 Condition 1
	setcycle 7 Letter_duration 15
	setcycle 7 Condition 1
	setcycle 8 Letter_duration 45
	setcycle 8 Condition 1
	setcycle 9 Letter_duration 75
	setcycle 9 Condition 1
	setcycle 10 Letter_duration 135
	setcycle 10 Condition 1
	setcycle 11 Letter_duration 195
	setcycle 11 Condition 1
	setcycle 12 Letter_duration 5
	setcycle 12 Condition 1
	setcycle 13 Letter_duration 15
	setcycle 13 Condition 1
	setcycle 14 Letter_duration 45
	setcycle 14 Condition 1
	setcycle 15 Letter_duration 75
	setcycle 15 Condition 1
	setcycle 16 Letter_duration 135
	setcycle 16 Condition 1
	setcycle 17 Letter_duration 195
	setcycle 17 Condition 1
	setcycle 18 Letter_duration 75
	setcycle 18 Condition 2
	setcycle 19 Letter_duration 75
	setcycle 19 Condition 2
	setcycle 20 Letter_duration 75
	setcycle 20 Condition 2
	setcycle 21 Letter_duration 75
	setcycle 21 Condition 2
	setcycle 22 Letter_duration 75
	setcycle 22 Condition 2
	setcycle 23 Letter_duration 75
	setcycle 23 Condition 2
	setcycle 24 Letter_duration 75
	setcycle 24 Condition 2
	setcycle 25 Letter_duration 75
	setcycle 25 Condition 2
	setcycle 26 Letter_duration 75
	setcycle 26 Condition 2
	setcycle 27 Letter_duration 75
	setcycle 27 Condition 3
	setcycle 28 Letter_duration 75
	setcycle 28 Condition 3
	setcycle 29 Letter_duration 75
	setcycle 29 Condition 3
	setcycle 30 Letter_duration 75
	setcycle 30 Condition 3
	setcycle 31 Letter_duration 75
	setcycle 31 Condition 3
	setcycle 32 Letter_duration 75
	setcycle 32 Condition 3
	setcycle 33 Letter_duration 75
	setcycle 33 Condition 3
	setcycle 34 Letter_duration 75
	setcycle 34 Condition 3
	setcycle 35 Letter_duration 75
	setcycle 35 Condition 3
	run Sequence_experimental_trials

define sketchpad Masks
	# draw image center=1 file="mask.png" scale=1 show_if=always x="[p9]" y="[p10]" z_index=0
	# draw image center=1 file="mask2.png" scale=1 show_if=always x="[p11]" y="[p12]" z_index=0
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="mask.png" scale=1 show_if=always x="[p1]" y="[p2]" z_index=0
	draw image center=1 file="mask2.png" scale=1 show_if=always x="[p3]" y="[p4]" z_index=0
	draw image center=1 file="mask3.png" scale=1 show_if=always x="[p5]" y="[p6]" z_index=0
	draw image center=1 file="mask4.png" scale=1 show_if=always x="[p7]" y="[p8]" z_index=0
	draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size=68 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad Partial_Report
	set duration "[Letter_duration]"
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L1]" x="[p1]" y="[p2]" z_index=0
	draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L2]" x="[p3]" y="[p4]" z_index=0
	draw textline center=1 color=blue font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L3]" x="[p5]" y="[p6]" z_index=0
	draw textline center=1 color=blue font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L4]" x="[p7]" y="[p8]" z_index=0
	draw textline center=1 color=blue font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L5]" x="[p9]" y="[p10]" z_index=0
	draw textline center=1 color=blue font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L6]" x="[p11]" y="[p12]" z_index=0

define sequence Sequence_experimental_trials
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run letter_eccentricity always
	run Fixation always
	run BlankScreen_100ms always
	run Letter_generation always
	run Whole_Report_6 always
	run Masks "[Masking] = 1"
	run _flushkeys always
	run set_response_empty always
	run Letter_Reproduction always
	run compute_accuracy always
	run logger always

define sequence Sequence_practice_trials
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run letter_eccentricity always
	run Fixation always
	run BlankScreen_100ms always
	run Letter_generation always
	run Whole_Report_6 always
	run Masks "[Masking] = 1"
	run _flushkeys always
	run set_response_empty always
	run Letter_Reproduction always
	run Block_1 always
	run compute_accuracy always
	run logger always

define sequence StartScreen_and_Trials
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prepare_feedback always
	run feedback_start_block always
	run Loop_experimental_Trials always
	run new_feedback "[Block]=14"

define sketchpad Whole_Report_2
	set duration "[Letter_duration]"
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L1]" x="[p1]" y="[p2]" z_index=0
	draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L2]" x="[p3]" y="[p4]" z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L3]" x="[p5]" y="[p6]" z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L4]" x="[p7]" y="[p8]" z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L5]" x="[p9]" y="[p10]" z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L6]" x="[p11]" y="[p12]" z_index=0

define sketchpad Whole_Report_6
	# draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L5]" x="[p9]" y="[p10]" z_index=0
	# draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L6]" x="[p11]" y="[p12]" z_index=0
	set duration "[Letter_duration]"
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L1]" x="[p1]" y="[p2]" z_index=0
	draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L2]" x="[p3]" y="[p4]" z_index=0
	draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L3]" x="[p5]" y="[p6]" z_index=0
	draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size="[letter_size]" html=yes show_if=always text="[L4]" x="[p7]" y="[p8]" z_index=0
	draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size=68 html=yes show_if=always text="+" x=0 y=0 z_index=0

define keyboard_response _flushkeys
	set timeout 0
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define inline_script compute_accuracy
	set description "Executes Python code"
	___run__
	# change letter_duration output so that actual duration is saved
	Letter_duration = self.get('Letter_duration')
	exp.set('Letter_duration', Letter_duration)
	
	# keep track of time
	from datetime import datetime
	progress = datetime.now()-start_time
	exp_minutes = progress.seconds / 60
	exp_seconds = progress.seconds % 60
	
	time_progress = "%d minutes, %d seconds" % (exp_minutes, exp_seconds)
	exp.set('time_progress', time_progress)
	exp.set('exp_minutes', exp_minutes)
	exp.set('exp_seconds', exp_seconds)
	
	
	# from here: response handling
	
	#import response as string (!)
	response = str(self.get('response'))
	
	# remove white space, commata, points etc. from response
	import re
	def strp(string):
	    
	     new = re.sub('[^\w]', '', string)
	     return new.replace("_", "")
	
	response = strp(response)
	
	
	# change letter input to "-" if no answer has been made
	
	if response == '':
		x = '-'
		response = '-'
		count_responses = self.get('count_responses') + 0
		number_responses = 0
	
	else:
		response = response.upper() # use capital letters in response, so that it can be compared to the presented letters
		x = response # use 'x' to compute accuracy; 'response' will remain the variable that is saved as response in the logger
		count_responses = self.get('count_responses') + len(response) 
		number_responses = len(response) 
	
	
	# compute accuracy of responses for each block so a feedback can be given
	# get response and compare it to the presented letters
	
	# import letters as list
	
	letters = [self.get('L1'), self.get('L2'), self.get('L3'), self.get('L4')] #self.get('L5'), self.get('L6')]
	
	# no response was given
	if x == '-':
		count_correct = self.get('count_correct') + 0	
		correct_responses = 0
		
	
	# response was given:
	# x is used instead of variable 'responses' to compute accuracy, x will be unique capital letters that have been reported
	# 'responses' also included double responses and numbers
	elif x != '-':  
		x = set(x) # only use each letter once, else two of the same responses will result in two correct answers
		count_correct = self.get('count_correct') # will be updated in the for loop below	
		correct_responses = 0 # will also be updated in the for loop below
		
		# loop that compares reported letters to presented letters 
		#if self.get('Condition') == 1: # only here the whole list of six letters is needed to compute correctness
		for i in x:
			if i in letters:
				count_correct += 1
				correct_responses += 1
		#else:
			#for i in x:
				#if i in letters[0:2]:
					#count_correct += 1
					#correct_responses += 1
	
	# compute the accumulated accuracy for the blocks
	
	if count_responses != 0:
		accumulated_accuracy = float(count_correct) / float(count_responses)
	else:
		accumulated_accuracy = None # will result in None if no response has yet been made -> accuracy cannot be computed in this case
			
	
	#set the relevant variables
	exp.set('count_correct', count_correct) # counts up till end of each block
	exp.set('count_responses', count_responses) # counts up till end of each block
	exp.set('correct_responses', correct_responses) # correct responses in each trial
	exp.set('number_responses', number_responses) # number of responses in each block
	exp.set('accumulated_accuracy', accumulated_accuracy)  # accumulated accuracy in the present block
	exp.set('response', response)
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run input_perceptual_threshold always
	run Instructions always
	run intro always
	run log_file_save always
	run Adjust_monitor always
	run loop_Block1 always
	run Block_2_to_14 always

define sketchpad feedback_start_block
	# draw textline 0 64 "Time since the experiment started: [time_progress]" center=1 color=white font_family="Arial" font_size=24 font_italic=no font_bold=no show_if="always" html="yes"
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size=24 html=yes show_if="[accurat]<80" text="" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="You are currently [accurat]% accurate" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if="[end]=0" text="You are about to start block [Block]. Press the SPACEBAR to start." x=0 y=64 z_index=0

define form_text_input input_perceptual_threshold
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var perceptual_threshold
	set form_title Timing
	__form_question__
	
	Individual perceptual threshold?
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad intro
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=no font_family=sans font_italic=no font_size=36 html=yes show_if=always text="The aim of this experiment is to report the letters you are </b> fairly certain </b> you saw<br /><br />Press the SPACEBAR to begin" x=0 y=0 z_index=0
	draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="" x=0 y=32 z_index=0
	draw textline center=1 color=red font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="" x=32 y=32 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define inline_script letter_eccentricity
	set description "Executes Python code"
	set _run ""
	___prepare__
	#compute coordinates for the letter positioning; these are used in the Letter_generation item to position the letters
	if var.Eccentricity == 1:
		# this formula converts visual angle to cm
		radius = 2*screen_distance*tan(ecc1/2) # the radius in which the letters are presented around the center must correspond to a 7.5 degree of visual angle
	elif var.Eccentricity == 2:
		# this formula converts visual angle to cm
		radius = 2*screen_distance*tan(ecc2/2) 
	
	#getting coordinates for letter locations	
	
	Y_at_ZeroX = (resolution_width / screen_width)*radius	
	Y_and_X = (Y_at_ZeroX/math.sqrt(2))
	
	#set the variables to the experiment
	exp.set('Y_at_ZeroX', Y_at_ZeroX)
	exp.set('Y_and_X', Y_and_X)
	exp.set('letter_size', letter_size)
	__end__

define inline_script log_file_save
	set description "Executes Python code"
	___run__
	#saving the log file in a particular location - not in the git repository this script is stored in
	
	# recording log file specfic to experiment
	subject_nr_string = str(var.subject_nr)
	date_str = datetime.now().isoformat()[:-7]
	data_path = u'/home/experimenter/DMT-AD/DMT2019_rawdata/'
	data_string = u'subject{sub}_{title}_{date}.csv'
	#individual subject path
	data_dir = os.path.join(data_path,subject_nr_string)
	if not os.path.exists(data_dir):
			os.makedirs(data_dir)
	data_outpath = os.path.join(data_dir, data_string)
	datafile = log.open(data_outpath.format(sub=subject_nr_string, date=date_str, title=var.title))
	__end__
	set _prepare "import os"

define logger logger
	set use_quotes yes
	set ignore_missing yes
	set description "Logs experimental data"
	set auto_log no
	log L1
	log L2
	log L3
	log L4
	log posLet1
	log posLet2
	log posLet3
	log posLet4
	log Block
	log response
	log Letter_duration
	log count_correct
	log count_responses
	log subject_nr
	log time_progress
	log exp_minutes
	log exp_seconds
	log correct_responses
	log number_responses
	log accumulated_accuracy
	log Eccentricity
	log Timing
	log Masking

define loop loop_Block1
	set source_file "task_conditions_60hz_eccentricities.csv"
	set source file
	set repeat 1
	set order random
	set item Sequence_practice_trials
	set description "Repeatedly runs another item"
	set cycles 18
	set continuous no
	set column_order "Condition;Letter_duration"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Letter_duration 5
	setcycle 0 Condition 1
	setcycle 1 Letter_duration 15
	setcycle 1 Condition 1
	setcycle 2 Letter_duration 45
	setcycle 2 Condition 1
	setcycle 3 Letter_duration 75
	setcycle 3 Condition 1
	setcycle 4 Letter_duration 135
	setcycle 4 Condition 1
	setcycle 5 Letter_duration 195
	setcycle 5 Condition 1
	setcycle 6 Letter_duration 75
	setcycle 6 Condition 2
	setcycle 7 Letter_duration 75
	setcycle 7 Condition 2
	setcycle 8 Letter_duration 75
	setcycle 8 Condition 2
	setcycle 9 Letter_duration 75
	setcycle 9 Condition 2
	setcycle 10 Letter_duration 75
	setcycle 10 Condition 2
	setcycle 11 Letter_duration 75
	setcycle 11 Condition 2
	setcycle 12 Letter_duration 75
	setcycle 12 Condition 3
	setcycle 13 Letter_duration 75
	setcycle 13 Condition 3
	setcycle 14 Letter_duration 75
	setcycle 14 Condition 3
	setcycle 15 Letter_duration 75
	setcycle 15 Condition 3
	setcycle 16 Letter_duration 75
	setcycle 16 Condition 3
	setcycle 17 Letter_duration 75
	setcycle 17 Condition 3
	run Sequence_practice_trials

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="You are currently [accurat]% accurate" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="This is the end of the experiment. Thank you for your participation. Please contact the examiner." x=0 y=32 z_index=0

define form_multiple_choice new_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "Your question"
	__options__
	Yes
	No
	Maybe
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script prepare_feedback
	set description "Executes Python code"
	set _run ""
	___prepare__
	accurat = self.get('accumulated_accuracy') * 100
	accurat = int(accurat) # for feedback
	
	# reset feedback variables to 0
	count_correct = 0 
	count_responses = 0
	
	exp.set('count_correct', count_correct) 
	exp.set('count_responses', count_responses)
	exp.set('accurat', accurat) # for feedback
	__end__

define inline_script set_response_empty
	set description "Executes Python code"
	___run__
	# set response to "" for each trial
	# else a none-response is saved as 'None' which cannot be distinguished from the case when a participant types 'None'
	
	response = ""
	exp.set('response', response)
	__end__
	set _prepare ""

