---
API: 2.1
OpenSesame: 3.2.8b1
Platform: posix
---
set width 1920
set uniform_coordinates yes
set title visualDetection
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/experimenter/git/DMT2019"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define inline_script apply_settings
	set description "Executes Python code"
	___run__
	webcam_path = "/dev/video{}".format(camera_number)
	set_string = ",".join(
		param_name+"="+param_value
		for param_name, param_value in cam_settings.items()
	)
	cmd_fmt = "v4l2-ctl -d {device} --set-ctrl {params}".format(
		device=webcam_path,
		params=set_string
	)
	sys.stderr.write(cmd_fmt+"\n")
	subprocess.call(cmd_fmt, shell=True)
	__end__
	___prepare__
	import socket
	import subprocess
	__end__

define synth beep
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define sketchpad blank
	# code that means space can be used as esc key
	set duration 0
	set description "Displays stimuli"

define sketchpad camera_pause
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Please look at the camera" x=0 y=0 z_index=0

define inline_script camera_settings
	set description "Executes Python code"
	set _run ""
	___prepare__
	# these will be applied after the camera is selected
	cam_settings = {
		"white_balance_temperature_auto": "0", # off
		"power_line_frequency": "2", # 60Hz
		"exposure_auto": "1", # off
		"exposure_absolute": "150",
		"saturation": "1" # greyscale
	}
	cam_resolution = (1280,960)
	camera_number = 0
	port_base = 50000
	eye_smallest_px = 100
	eye_largest_px = 200
	keep_face_image = True # False for testing!
	
	#set up
	output_path = u'/home/experimenter/DMT-AD/DMT2019_eyeimages/visual_detection'
	photographer_path = u'/home/experimenter/DMT-AD/DMT2019_eyecapture/'
	images_to_save = []
	
	#for if eye_capture loop
	#eye_capture scripts don't run if false and no eye-images are caught
	eye_capture = False
	__end__

define loop camera_test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run test

define inline_script catch_script
	set description "Executes Python code"
	___run__
	# in case mouse is pressed when we get here
	wait_while_lmb_pressed(True)
	
	# wait for "mouse down" i.e. touch
	wait_while_lmb_pressed(False,update_fn=get_update_function(False))
	t0 = clock.time()
	
	#eye grab 1
	if eye_capture:
		var.eye_image_touch1_time, var.eye_image_touch1_file = capture_eye_image("touch1")
	
	# wait for "mouse up"
	result = wait_while_lmb_pressed(
		True,
		timeout = var.target_onset,
		bounds=target_bounds,
		update_fn=get_update_function(True)
	)
	
	
	if result == TouchpadResult.TIMED_OUT:
		target_time = clock.time()
		var.target_time = target_time - t0
	
		#eye grab 2
		if eye_capture:
			var.eye_image_target_time, var.eye_image_target_file = capture_eye_image("target")
	
		#waiting for target presentation, maintain all the same
	wait_while_lmb_pressed(True, timeout = 1000, bounds=target_bounds, update_fn=get_update_function(True)
		)
			
	var.voice_response_time = clock.time() - target_time
	committed = True
	__end__
	___prepare__
	# target onset times
	var.target_onset = random.choice(target_onset_values)
	
	target_bounds = (var.touch_x, var.touch_y, var.touch_x+86, 129) #bounding box for target
	
	def get_update_function(pressed):
		def update_both(t,c):
			update_fixation(t,c,pressed)
			update_touchpad(t,c,pressed)
		return update_both
	
	def update_fixation(t,c,pressed):
		if pressed:
			i = int(t % 255)
			col = (255, i, i)
		else:
			col = "white"
		c_x, c_y = var.fix_x, 0
		c.line(c_x-fixWidth_pix,c_y,c_x+fixWidth_pix,c_y,color=col,penwidth=5)
		c.line(c_x,c_y-fixWidth_pix,c_x,c_y+fixWidth_pix,color=col,penwidth=5)
	
	#draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	
	
	def update_touchpad(t,c,pressed):
		if pressed:
			c.rect(x=var.touch_x, y=var.touch_y, w=var.touch_y*2, h=var.touch_y*2, color="black", penwidth=5, fill=0)		
		else:
			c.rect(x=var.touch_x, y=var.touch_y, w=var.touch_y*2, h=var.touch_y*2, color="white", penwidth=5, fill=0)
	
	def update_target(t,c,pressed):
		if pressed:
			c.circle(x=var.targ_x, y = var.targ_y, r=var.targetSize_pix, fill=True, color="white")
	
	
	#for later presentation of fixation
	var.fix_x1 = var.fix_x-fixWidth_pix
	var.fix_x2 = var.fix_x+fixWidth_pix
	var.fix_y1 = -fixWidth_pix
	var.fix_y2 = fixWidth_pix
	
	#identifying responses for later
	target_identified = False
	correct_rejection = False
	miss = False
	false_alarm = False
	
	#eye image prep
	def capture_eye_image(image_name):
		fmt = u'subject{sub}_{title}_{hand}_{date}_{trial}_{image}.png'
		filename = fmt.format(
			sub=subject_nr_string,
			date=date_str,
			title=var.title,
			hand=var.hand,
			image=image_name,
			trial=var.count_experiment+1
		)
		out_dir = os.path.join(output_path,subject_nr_string)
		if not os.path.exists(out_dir):
			os.makedirs(out_dir)
		out_path = os.path.join(out_dir,filename)
		t0 = clock.time()
		client_socket.send("{"+codecs.encode(out_path,'utf8')+"}")
		image_time_taken = clock.time()-t0
		sys.stderr.write("read took {}\n".format(clock.time()-t0))
		images_to_save.append(out_path)
		return image_time_taken, filename
	__end__

define sketchpad catch_trial_disp
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1="[fix_y1]" y2="[fix_y2]" z_index=0

define keyboard_response catch_valid_trial
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response n
	set allowed_responses "y;n;e;v"

define inline_script clean_up
	set description "Executes Python code"
	___run__
	
	def cleanup():
		if process is not None:
			sys.stderr.write("terminating {}\n".format(process.pid))
			process.terminate()
			clock.sleep(500)
			if process.poll() is None:
				sys.stderr.write("killing {}\n".format(process.pid))
				process.kill()
		else:
			sys.stderr.write("no process!\n")
			
	register_cleanup_function(cleanup)
	__end__
	set _prepare ""

define inline_script counterbalance_script
	set description "Executes Python code"
	set _run ""
	___prepare__
	# getting files prepped for the counterbalancing across hand dominance
	var.target_file = "pointingTask_targets_radial7_{hand}.csv".format(hand=var.hand)
	if var.hand == 'left':
		var.fix_x = 900
		var.touch_x = 857
	elif var.hand == 'right':
		var.fix_x = -900
		var.touch_x = -943
	else:
		assert False, 'Unexpected value for var.hand'
	
	var.touch_y = var.pix_perDeg #half size of touch pad (yaxis)
	var.touch_y_loc = 0
	var.fix_y = -var.pix_perDeg*5
	
	
	var.fix_x1 = var.fix_x-fixWidth_pix #for presentation of the fix cross (not dot)
	var.fix_x2 = var.fix_x+fixWidth_pix
	var.fix_y1 = var.fix_y-fixWidth_pix #for presentation of the fix cross (not dot)
	var.fix_y2 = var.fix_y+fixWidth_pix
	
	target_identified = False
	__end__

define feedback detection_accuracy_left
	set reset_variables no
	set duration mouseclick
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=32 html=yes show_if=always text="Thank you, you have completed the first block<br /><br />You correctly identified [total_targets_identified]/9 targets<br />You correctly rejected [total_correct_rejection]/6 trials<br /><br />Please inform the experimenter to continue" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run in_case_of_connection_failed always
	run eye_detection_license always
	run camera_settings always
	run apply_settings "=eye_capture"
	run photographer_create "=eye_capture"
	run clean_up "=eye_capture"
	run hand_used always
	run outside_loop always

define inline_script experiment_script
	set description "Executes Python code"
	___run__
	# in case mouse is pressed when we get here
	wait_while_lmb_pressed(True)
	
	# wait for "mouse down" i.e. touch
	wait_while_lmb_pressed(False,update_fn=get_update_function(False))
	t0 = clock.time()
	
	#eye grab 1
	if eye_capture:
		var.eye_image_touch1_time, var.eye_image_touch1_file = capture_eye_image("touch1")
		
	# wait for "mouse up"
	result = wait_while_lmb_pressed(
		True,
		timeout = var.target_onset,
		bounds=target_bounds,
		update_fn=get_update_function(True)
	)
	
	
	if result == TouchpadResult.TIMED_OUT:
		target_time = clock.time()
		var.target_time = target_time - t0
	
		#eye grab 2
		if eye_capture:
			var.eye_image_target_time, var.eye_image_target_file = capture_eye_image("target")
	
		#waiting for target presentation, maintain all the same
	if var.catch == 0:
		wait_while_lmb_pressed(True,timeout = 1000, bounds=target_bounds, update_fn=get_update_function2(True))
	elif var.catch == 1:
		wait_while_lmb_pressed(True,timeout = 1000, bounds=target_bounds, update_fn=get_update_function(True))
			
	var.voice_response_time = clock.time() - target_time
	committed = True
	__end__
	___prepare__
	# target onset times
	var.target_onset = random.choice(target_onset_values)
	
	target_bounds = (var.touch_x, var.touch_y_loc, var.touch_x+2*var.pix_perDeg, 129) #bounding box for target
	
	def get_update_function(pressed):
		def update_both(t,c):
			update_fixation(t,c,pressed)
			update_touchpad(t,c,pressed)
		return update_both
	
	def get_update_function2(pressed):
		def update_both2(t,c):
			update_fixation(t,c,pressed)
			update_target(t,c,pressed)
		return update_both2
	
	def update_fixation(t,c,pressed):
		if pressed:
			i = int(t % 255)
			col = (255, i, i)
		else:
			col = "white"
		c_x, c_y = var.fix_x, var.fix_y
		c.line(c_x-fixWidth_pix,c_y,c_x+fixWidth_pix,c_y,color=col,penwidth=5)
		c.line(c_x,c_y-fixWidth_pix,c_x,c_y+fixWidth_pix,color=col,penwidth=5)
	
	#draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	
	
	def update_touchpad(t,c,pressed):
		if pressed:
			c.rect(x=var.touch_x, y=var.touch_y_loc, w=var.touch_y*2, h=var.touch_y*2, color="black", penwidth=5, fill=0)		
		else:
			c.rect(x=var.touch_x, y=var.touch_y_loc, w=var.touch_y*2, h=var.touch_y*2, color="white", penwidth=5, fill=0)
	
	def update_target(t,c,pressed):
		if pressed:
			c.circle(x=var.targ_x, y = var.targ_y, r=var.targetSize_pix, fill=True, color="white")
	
	#identifying responses for later
	target_identified = False
	correct_rejection = False
	miss = False
	false_alarm = False
	
	#eye image prep
	def capture_eye_image(image_name):
		fmt = u'subject{sub}_{title}_{hand}_{date}_{trial}_{image}.png'
		filename = fmt.format(
			sub=subject_nr_string,
			date=date_str,
			title=var.title,
			hand=var.hand,
			image=image_name,
			trial=var.count_experiment_script+1
		)
		out_dir = os.path.join(output_path,subject_nr_string)
		if not os.path.exists(out_dir):
			os.makedirs(out_dir)
		out_path = os.path.join(out_dir,filename)
		t0 = clock.time()
		client_socket.send("{"+codecs.encode(out_path,'utf8')+"}")
		image_time_taken = clock.time()-t0
		sys.stderr.write("read took {}\n".format(clock.time()-t0))
		images_to_save.append(out_path)
		return image_time_taken, filename
	__end__

define notepad eye_detection_license
	__note__
	This is the license for the file "haarcascade_eye.xml"
	
	IMPORTANT: READ BEFORE DOWNLOADING, COPYING, INSTALLING OR USING.
	
	By downloading, copying, installing or using the software you agree to this license.
	If you do not agree to this license, do not download, install, copy or use the software.
	
	
	                        Intel License Agreement
	                For Open Source Computer Vision Library
	
	Copyright (C) 2000, Intel Corporation, all rights reserved.
	Third party copyrights are property of their re{"main-item-name": "new_pygaze_wait", "type": "item-snippet", "items": [{"item-type": "pygaze_wait", "item-name": "new_pygaze_wait", "script": ""}]}spective owners.
	
	Redistribution and use in source and binary forms, with or without modification, are permitted provided that the following conditions are met:
	
	   * Redistribution's of source code must retain the above copyright notice, this list of conditions and the following disclaimer.
	
	   * Redistribution's in binary form must reproduce the above copyright notice, this list of conditions and the following disclaimer in the documentation and/or other materials provided with the distribution.
	
	   * The name of Intel Corporation may not be used to endorse or promote products derived from this software without specific prior written permission.
	
	This software is provided by the copyright holders and contributors "as is" and any express or implied warranties, including, but not limited to, the implied warranties of merchantability and fitness for a particular purpose are disclaimed.
	
	In no event shall the Intel Corporation or contributors be liable for any direct, indirect, incidental, special, exemplary, or consequential damages (including, but not limited to, procurement of substitute goods or services;
	 loss of use, data, or profits; or business interruption) however caused and on any theory of liability, whether in contract, strict liability, or tort (including negligence or otherwise) arising in any way out of the use of this software, even if advised of the possibility of such damage.
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad fixation
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1="[fix_y1]" y2="[fix_y2]" z_index=0

define inline_script global_prep
	set description "Executes Python code"
	set _run ""
	___prepare__
	# prepare steps that only need to happen once
	
	import csv
	from datetime import datetime
	from enum import Enum
	
	# mouse and keyboard import
	from libopensesame import sketchpad_elements
	from openexp.keyboard import keyboard
	
	import random #random number generator
	from random import seed
	from random import choice
	import numpy as np #useful for generating array of target onset times
	
	class TouchpadResult(Enum):
		OUT_OF_BOUNDS = 1
		LIFTED = 2
		TIMED_OUT = 3
	
	m = Mouse()
	myKeys = keyboard(exp, keylist=['space'])
	
	
	#beep = items['beep']
	blank = items['blank']
	
	#response items
	stim = items['target'] 
	fixation = items['fixation']
	touch_pad = items['touch_pad']
	
	# target files
	var.target_fileL = 'pointingTask_targets_radial7_left.csv'
	var.target_fileR = 'pointingTask_targets_radial7_right.csv'
	
	def in_bounds(x,y,bounds):
		left, top, right, bottom = bounds
		return x > left and x < right and y > top and y < bottom
	
	def wait_while_lmb_pressed(pressed, timeout=None, bounds=None, update_fn=None):
	
		"""
		pressed == True : wait while mouse left button pressed,
		within bounds if present
		pressed == False : wait while mouse left button not pressed
		bounds as (left, top, right, bottom)
		"""
		t0 = clock.time()
		while m.get_pressed()[0] == pressed:
			if pressed and bounds:
				(x, y), time = m.get_pos()
				if not in_bounds(x, y, bounds):
					return TouchpadResult.OUT_OF_BOUNDS
			if update_fn is None:
				clock.sleep(1)
			else:
				c = Canvas()
				update_fn(clock.time()-t0,c)
				c.show()
			if timeout and clock.time() - t0 >= timeout:
				return TouchpadResult.TIMED_OUT
		return TouchpadResult.LIFTED
				
	
	# running info for degrees visual angle
	# getting information about degrees visual angle
	
	# running info for degrees visual angle
	# getting information about degrees visual angle
	import math
	from math import atan2, degrees
	h = 17.5 #monitor height in cm
	w = 31
	d = 40 #distance between pp and monitor
	ry = 1080 #vertical resolution of monitor
	rx = 1920
	
	#deg_perPixY = degrees(atan2(.5*h, d))/(.5*ry)
	#deg_perPixX =  degrees(atan2(.5*w, d))/(.5*rx)
	#var.deg_perPix = (deg_perPixY + deg_perPixX)/2
	#var.pix_perDeg = 1/var.deg_perPix
	var.pix_perDeg = 43.1663 #taken from labview document
	var.deg_perPix = 1/var.pix_perDeg
	
	var.targetSize_pix = var.pix_perDeg #size of target in pixels
	var.targetSize_deg = var.targetSize_pix*var.deg_perPix #converting both fix target distance and size into deg
	
	#sizes in mm for reporting
	var.pix_permm = ((ry/(h*10))+(rx/(w*10))) /2
	var.mm_perPix = 1/var.pix_permm
	var.cm_perPix = var.mm_perPix/10
	var.targetSize_mm = var.mm_perPix * var.targetSize_pix
	
	# fixation cross width (1 deg)
	fixWidth_pix = var.pix_perDeg/2 #half a degree - half measure of fixation cross
	
	# for counting number of targets identified
	var.total_targets_identified = 0
	var.total_miss = 0
	var.total_false_alarm = 0
	var.total_correct_rejection = 0
	var.total_eye_move = 0
	
	# fixation time - randomise
	# create a random matrix to choose from during loop structure - between 500 and 1500ms
	# recording log file specfic to experiment
	subject_nr_string = str(var.subject_nr)
	date_str = datetime.now().isoformat()[:-7]
	data_path = u'/home/experimenter/DMT-AD/DMT2019_rawdata/'
	data_string = u'subject{sub}_{title}_{hand}_{date}.csv'
	#individual subject path
	data_dir = os.path.join(data_path,subject_nr_string)
	if not os.path.exists(data_dir):
			os.makedirs(data_dir)
	data_outpath = os.path.join(data_dir, data_string)
	datafile = log.open(data_outpath.format(sub=subject_nr_string, date=date_str, title=var.title, hand=var.hand))
	
	# target onset time array
	target_onset_values = list(np.arange(250,850,100))
	
	#manual trial counter for limiting experiment to max 50 trials
	var.valid_trial_count = 0
	__end__

define form_multiple_choice hand_used
	set timeout infinite
	set spacing 10
	set question "Hand used to press touch-pad?"
	__options__
	left
	right
	__end__
	set margins "50;50;50;50"
	set form_var hand
	set form_title "Hand Used"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define notepad in_case_of_connection_failed
	__note__
	This is probably due to an old photographer process. This can be killed with:
	
	ps aux | grep photographer
	
	in the output you'll see a line like:
	
	experim+  3106  0.5  0.8 839700 65544 ?        Sl   12:54   0:01 python /home/experimenter/DMT-AD/DMT2019_eyecapture/photographer.py 0 1280 960 50247
	
	Use the kill command with the number in the second column:
	
	kill 3106
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define notepad incase_experiment_hangs
	__note__
	If the experiment appears to start but won't go past the first instruction
	screen, this is possibly due to an old zombie OpenSesame run holding on
	to the webcam.
	
	Close OpenSesame, go to the terminal, and type
	
	killall opensesame
	
	If this doesn't work, you can try
	
	killall -9 opensesame
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad intro
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=38 html=yes show_if=always text="Target detection task<br /><br />Please say 'yes' when you see a target or 'no' if no target appears<br /><br />Touchscreen to begin" x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log total_targets_identified
	log total_correct_rejection
	log total_miss
	log total_false_alarm
	log subject_nr
	log catch
	log average_response_time
	log touch_x
	log count_trial_sequence
	log logfile
	log total_eye_move
	log targ_x
	log targ_y
	log target_time
	log feedback_time
	log eye_image_touch1_time
	log eye_image_touch1_file
	log eye_image_target_time
	log eye_image_target_file

define sequence loop
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run global_prep always
	run intro always
	run reset_feedback1 always
	run counterbalance_script always
	run loop1 always

define loop loop1
	set source_file "[target_file]"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define repeat_cycle new_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition always

define loop outside_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run outside_sequence

define sequence outside_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run camera_test "=eye_capture"
	run loop always
	run detection_accuracy_left always

define sketchpad pause
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1="[fix_y]" y2="[fix_y]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1="[fix_y1]" y2="[fix_y2]" z_index=0

define sketchpad pause2
	set duration 200
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1="[fix_y1]" y2="[fix_y2]" z_index=0

define inline_script photographer_create
	set description "Executes Python code"
	___run__
	port = port_base+random.randrange(0,1000)
	
	# create photographer
	cmd = [
		"python",
		os.path.join(photographer_path, "photographer.py"),
		str(camera_number),
		str(cam_resolution[0]),
		str(cam_resolution[1]),
		str(port)
	]
	print(cmd)
	process = subprocess.Popen(cmd)
	
	# server creates socket first before we start!
	clock.sleep(2000)
	
	client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
	client_socket.connect(("localhost", port))
	__end__
	___prepare__
	import random
	import socket
	import sys
	import os
	__end__

define reset_feedback reset_feedback1
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_script response_coding
	set description "Executes Python code"
	___run__
	#touch response time
	#wait_while_lmb_pressed(False,bounds=target_bounds)
	#var.time_tap = clock.time() - var.tap_t0
	
	if var.catch:
		if self.get('response') == 'y':
			false_alarm = True
			var.total_false_alarm = var.total_false_alarm+1
		elif self.get('response') == 'n':
			correct_rejection = True
			var.total_correct_rejection = var.total_correct_rejection+1
		elif self.get('response') == 'e':
			eye_move = True
			var.total_eye_move = var.total_eye_move+1
	else:
		if self.get('response') == 'y':
			target_identified = True
			var.total_targets_identified = var.total_targets_identified+1
		elif self.get('response') == 'n':
			miss = True
			var.total_miss = var.total_miss+1
		elif self.get('response') == 'e':
			eye_move = True
			var.total_eye_move = var.total_eye_move+1
	__end__
	set _prepare ""

define inline_script save_camera_images
	set description "Executes Python code"
	___run__
	
	for out_path in images_to_save:
		if not eye_capture:
			continue
		if not os.path.exists(out_path):
			sys.stderr.write("couldn't find "+out_path+"\n")
			continue
		im = cv2.imread(out_path)
		grey = cv2.cvtColor(im, cv2.COLOR_BGR2GRAY)
		eyepos, _, weights = eye_cascade.detectMultiScale3(
			grey,
			outputRejectLevels=True
		)
		weights = list(weights)
		eyes_with_weights = zip(eyepos, weights)
		# filter for size
		def size_ok(epos):
			x, y, w, h = epos
			return (
				(eye_smallest_px <= w <= eye_largest_px)
				and	(eye_smallest_px <= h <= eye_largest_px)
			)
		eyes_filtered = [
			(epos, wgt) for epos, wgt in eyes_with_weights
			if size_ok(epos)
		]
		sorted_eyes = sorted(
			eyes_filtered,
			key=lambda x: x[1],
			reverse=True
		)	
		eyes = sorted_eyes 
		
		if len(eyes) == 2:
			if eyes[0][0][0] > eyes[1][0][0]:
				eyes[0], eyes[1] = eyes[1], eyes[0]
		
		for idx, (eyepos, weight) in enumerate(eyes):
			x, y, w, h = eyepos
			eye = im[y:y+h,x:x+w]
			cv2.imwrite("{}_eye{}.png".format(out_path[:-4], idx), eye)
	
		#for eyepos, weight in eyes:
		#	cv2.rectangle(im, (x, y), (x+w, y+h), (255, 0, 0), 2)
		
		if keep_face_image:
			cv2.imwrite("{}".format(out_path), im)
		else:
			os.unlink(out_path)
	__end__
	___prepare__
	import cv2
	
	eye_cascade = cv2.CascadeClassifier(
		os.path.join(photographer_path,'haarcascade_eye.xml')
	)
	__end__

define inline_script show_picture_delete
	set description "Executes Python code"
	___run__
	
	c = Canvas()
	image_scale = 0.6*float(c.height)/float(cam_resolution[1])
	
	c.image(test_pic,scale=image_scale)
	c.show()
	
	k = Keyboard()
	k.get_key()
	
	os.unlink(test_pic)
	__end__
	set _prepare ""

define keyboard_response targ_valid_trial
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response y
	set allowed_responses "y;n;e;v"

define sketchpad target
	set duration 0
	set description "Displays stimuli"

define inline_script target_prep
	set description "Executes Python code"
	set _run ""
	___prepare__
	circle_string = 'draw circle x={} y={} r={} fill=1 color=white'.format(var.targ_x,var.targ_y,var.targetSize_pix)
	fix1_string = (
	'draw line color=white penwidth=5 show_if=always x1="{x1}" x2="{x2}" y1=0 y2=0 z_index=0'.format(
			x1=var.fix_x1, x2=var.fix_x2)
	)
	fix2_string = 'draw line color=white penwidth=5 show_if=always x1={x} x2={x} y1={y1} y2={y2} z_index=0'.format(
		x=var.fix_x, y1=var.fix_y1, y2=var.fix_y2)
	
	
	stim.elements = [
		sketchpad_elements.circle(stim,circle_string), 
		sketchpad_elements.line(stim,fix1_string),
		sketchpad_elements.line(stim,fix2_string)]
	
	tr = touch_pad.elements[0].eval_properties()
	target_bounds = (tr['x'], tr['y'], tr['x']+tr['w'], tr['y']+tr['h'])
	
	target_t0 = clock.time()
	
	
	#identifying responses for later
	target_identified = False
	correct_rejection = False
	miss = False
	false_alarm = False
	__end__

define sequence test
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run camera_pause always
	run test_picture always
	run wait always
	run show_picture_delete always

define inline_script test_picture
	set description "Executes Python code"
	___run__
	test_pic = os.path.join(output_path,"test.png")
	
	t0 = clock.time()
	sys.stderr.write(test_pic+"\n")
	client_socket.send("{"+codecs.encode(test_pic,'utf8')+"}")
	sys.stderr.write("read took {}\n".format(clock.time()-t0))
	__end__
	set _prepare "import codecs"

define sketchpad touch_pad
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=0 h=86 penwidth=5 show_if=always w=86 x="[touch_x]" y="[touch_y]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1="[fix_y1]" y2="[fix_y2]" z_index=0

define sketchpad touch_pad2
	set duration "[target_onset]"
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1="[fix_y1]" y2="[fix_y2]" z_index=0

define inline_script touch_wait
	set description "Executes Python code"
	___run__
	#incase mouse down when we get there
	wait_while_lmb_pressed(True)
	# wait for "mouse down" i.e. touch
	wait_while_lmb_pressed(False)
	
	t0 = clock.time()
	__end__
	___prepare__
	#generating random variable from list
	var.target_onset = random.choice(target_onset_values)
	__end__

define inline_script trial_repeat
	set description "Executes Python code"
	___run__
	if self.get('response') == 'v':
		# prepare trail sequence again
		exp.items['trial_sequence'].prepare()
		# re-run trial sequence
		exp.items['trial_sequence'].run()
	if self.get('response') == 'e':
		# prepare trail sequence again
		exp.items['trial_sequence'].prepare()
		# re-run trial sequence
		exp.items['trial_sequence'].run()
	__end__
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blank always
	run experiment_script always
	run beep "=committed"
	run pause "=committed"
	run targ_valid_trial "[catch] = 0"
	run catch_valid_trial "[catch] = 1 "
	run response_coding "=committed"
	run logger "=committed"
	run trial_repeat "=committed"
	run new_repeat_cycle "=not committed"

define sketchpad wait
	set duration 5000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Please wait." x=0 y=0 z_index=0

