---
API: 2.1
OpenSesame: 3.2.7b1
Platform: posix
---
set width 1920
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start visual_detection
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/experimenter/git/DMT2019/visualDetectionTask"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sketchpad accuracy_readout
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="[total_targets_identified]" x=0 y=0 z_index=0

define synth beep
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define synth beep_1
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define sketchpad blank
	# code that means space can be used as esc key
	set duration 0
	set description "Displays stimuli"

define sketchpad blank_1
	# code that means space can be used as esc key
	set duration 0
	set description "Displays stimuli"

define sketchpad blank_2
	# code that means space can be used as esc key
	set duration 0
	set description "Displays stimuli"

define sketchpad catch_trial_disp
	set duration 2000
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define inline_script elapsedtime
	set description "Executes Python code"
	___run__
	# amount of time elapsed between target and response
	var.elapsed = clock.time() - target_t0
	
	if ["catch"] == 1:
		if m.get_pressed()[0] == pressed:
				false_alarm = False 			
		else:
			false_alarm = True
			var.false_alarm_count = var.false_alarm_count+1
	__end__
	set _prepare ""

define sketchpad end_block
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="End of the first block<br /><br />Please inform the experimenter, then touch the screen to continue" x=0 y=0 z_index=0

define sketchpad end_experiment
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="You have completed the task<br /><br />Please inform the experimenter" x=0 y=0 z_index=0

define inline_script experiment_scriptL
	set description "Executes Python code"
	set _run ""
	___prepare__
	# script with experiment information
	var.fix_x = 900 #variables with fixation and touch
	var.touch_x = 868
	
	var.fix_x1 = var.fix_x-15 #for presentation of the fix cross (not dot)
	var.fix_x2 = var.fix_x+15
	
	target_identified = False
	__end__

define inline_script experiment_scriptR
	set description "Executes Python code"
	set _run ""
	___prepare__
	# script with experiment information
	var.fix_x = -900 #variables with fixation and touch
	var.touch_x = -932
	
	var.fix_x1 = var.fix_x-15 #for presentation of the fix cross (not dot)
	var.fix_x2 = var.fix_x+15
	
	target_identified = False
	__end__

define sketchpad fixation
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define sketchpad fixation_1
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script global_prep
	set description "Executes Python code"
	___run__
	# fixation time - randomise
	var.target_onset = 500
	__end__
	___prepare__
	# prepare steps that only need to happen once
	
	import csv
	
	from libopensesame import sketchpad_elements
	from openexp.keyboard import keyboard
	
	m = Mouse()
	myKeys = keyboard(exp, keylist=['space'])
	
	
	#beep = items['beep']
	blank = items['blank']
	
	#response items
	stim, response = items['target'], items['target_mouse_response']
	fixation = items['fixation']
	touch_pad = items['touch_pad']
	
	# target files
	var.target_fileL = 'pointingTask_targets_radial7_left.csv'
	var.target_fileR = 'pointingTask_targets_radial7_right.csv'
	
	def in_bounds(x,y,bounds):
		left, top, right, bottom = bounds
		return x > left and x < right and y > top and y < bottom
	
	def wait_while_lmb_pressed(pressed, timeout=None, bounds=None):
	
		"""
		pressed == True : wait while mouse left button pressed,
		within bounds if present
		pressed == False : wait while mouse left button not pressed
		bounds as (left, top, right, bottom)
		"""
		t0 = clock.time()
		while m.get_pressed()[0] == pressed:
			if pressed and bounds:
				(x, y), time = m.get_pos()
				if not in_bounds(x, y, bounds):
					break
			clock.sleep(1)
			if timeout and clock.time() - t0 >= timeout:
				break
				
	
	# running info for degrees visual angle
	# getting information about degrees visual angle
	import math
	from math import atan2, degrees
	h = 17.5 #monitor height in cm
	d = 40 #distance between pp and monitor
	r = 1080 #vertical resolution of monitor
	deg_perPix = degrees(atan2(.5*h, d))/(.5*r)
	var.pix_perDeg = 1/deg_perPix
	
	var.targetSize_pix = var.pix_perDeg*1.25 #size of target in pixels
	targetSize = var.targetSize_pix*deg_perPix #converting both fix target distance and size into deg
	
	# for counting number of targets identified
	var.total_targets_identified = 0
	var.false_alarm_count = 0
	__end__

define sketchpad intro
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=50 html=yes show_if=always text="Target detection task<br /><br />Touchscreen to begin" x=0 y=0 z_index=0

define sequence left
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run loop1 always

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define logger logger_1
	set description "Logs experimental data"
	set auto_log yes

define loop loop1
	set source_file "[target_fileL]"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define loop loop2
	set source_file "[target_fileR]"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence_1

define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	#incase mouse down when we get there
	wait_while_lmb_pressed(True)
	# wait for "mouse down" i.e. touch
	wait_while_lmb_pressed(False)
	
	t0 = clock.time()
	__end__
	set _prepare ""

define inline_script new_inline_script_1
	set description "Executes Python code"
	___run__
	#incase mouse down when we get there
	wait_while_lmb_pressed(True)
	# wait for "mouse down" i.e. touch
	wait_while_lmb_pressed(False)
	
	t0 = clock.time()
	__end__
	set _prepare ""

define sketchpad new_sketchpad_1
	set duration keypress
	set description "Displays stimuli"

define sketchpad pause2
	set duration 200
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define sketchpad pause2_1
	set duration 200
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define sequence right
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run loop2 always
	run end_experiment always

define sketchpad target
	set duration 0
	set description "Displays stimuli"

define sketchpad target_1
	set duration 0
	set description "Displays stimuli"

define inline_script target_identified
	set description "Executes Python code"
	set _run "target_identified = True"
	set _prepare ""

define mouse_response target_mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad target
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response target_mouse_response_1
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad target_1
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define inline_script target_prep
	set description "Executes Python code"
	___run__
	
	# wait for "mouse up"
	wait_while_lmb_pressed(True,timeout=200,bounds=target_bounds)
	var.reach_t0 = clock.time() #reaching onset
	var.time_touch_offset = var.reach_t0 - t0 #touch_offset time in seconds
	
	var.mouse_release = False
	
	committed = False
	__end__
	___prepare__
	circle_string = 'draw circle x={} y={} r={} fill=1 color=white'.format(var.x,var.y,var.targetSize_pix)
	fix1_string = (
		'draw line color=white penwidth=5 show_if=always x1="{x1}" x2="{x2}" y1=0 y2=0 z_index=0'.format(
			x1=var.fix_x-15, x2=var.fix_x+15)
	)
	fix2_string = 'draw line color=white penwidth=5 show_if=always x1={x} x2={x} y1=-15 y2=15 z_index=0'.format(
		x=var.fix_x)
	
	
	stim.elements = [
		sketchpad_elements.circle(stim,circle_string), 
		sketchpad_elements.line(stim,fix1_string),
		sketchpad_elements.line(stim,fix2_string)]
	
	tr = touch_pad.elements[0].eval_properties()
	target_bounds = (tr['x'], tr['y'], tr['x']+tr['w'], tr['y']+tr['h'])
	
	target_t0 = clock.time()
	__end__

define sketchpad touch_pad
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define sketchpad touch_pad2
	set duration "[target_onset]"
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define sketchpad touch_pad2_1
	set duration "[target_onset]"
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define sketchpad touch_pad3_1
	set duration 2000
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define sketchpad touch_pad_1
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define inline_script touch_release
	set description "Executes Python code"
	___run__
	
	#touch_release time
	wait_while_lmb_pressed(True,bounds=target_bounds)
	var.tap_t0 = clock.time() #reaching onset
	var.mouse_release = True
	__end__
	___prepare__
	__end__

define inline_script touch_release_1
	set description "Executes Python code"
	___run__
	
	#touch_release time
	wait_while_lmb_pressed(True,bounds=target_bounds)
	var.tap_t0 = clock.time() #reaching onset
	var.mouse_release = True
	__end__
	___prepare__
	# amount of time elapsed between target and response
	elapsed = clock.time() - target_t0
	__end__

define inline_script touch_response
	set description "Executes Python code"
	___run__
	#touch response time
	wait_while_lmb_pressed(False,bounds=target_bounds)
	var.time_tap = clock.time() - var.tap_t0
	var.mouse_release = False 
	
	target_identified = True
	
	var.total_targets_identified = var.total_targets_identified+1
	__end__
	set _prepare ""

define inline_script touch_response_1
	set description "Executes Python code"
	___run__
	#touch response time
	wait_while_lmb_pressed(False,bounds=target_bounds)
	var.time_tap = clock.time() - var.tap_t0
	var.mouse_release = False 
	
	target_identified = True
	__end__
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experiment_scriptL always
	run blank always
	run fixation always
	run touch_pad always
	run new_inline_script always
	run touch_pad2 always
	run target_prep always
	run target "[catch] = 0"
	run catch_trial_disp "[catch] = 1"
	run touch_release "[catch] = 0"
	run elapsedtime always
	run target_mouse_response "[catch] = 0 and [elapsed] < 3000"
	run touch_response "[catch] = 0 and [elapsed] < 3000"
	run beep "[catch] = 1 or [elapsed] < 3000"
	run pause2 always
	run logger always

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experiment_scriptR always
	run blank always
	run fixation always
	run touch_pad always
	run new_inline_script always
	run touch_pad2 always
	run target_prep always
	run target "[catch] = 0"
	run catch_trial_disp "[catch] = 1"
	run touch_release "[catch] = 0"
	run elapsedtime always
	run target_mouse_response "[catch] = 0 and [elapsed] < 3000"
	run touch_response "[catch] = 0 and [elapsed] < 3000"
	run beep "[catch] = 1 or [elapsed] < 3000"
	run pause2 always
	run logger always

define sequence visual_detection
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run global_prep always
	run intro always
	run left always
	run end_block always
	run right always

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.2 <i>Kafkaesque Koffka</i>" x=0 y=0 z_index=0

