---
API: 2.1
OpenSesame: 3.2.7b1
Platform: posix
---
set width 1920
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start visual_detection
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/experimenter/git/DMT2019/visualDetectionTask"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sketchpad accuracy_readout
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="[total_targets_identified]" x=0 y=0 z_index=0

define synth beep
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define synth beep_1
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define synth beep_2
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define sketchpad blank
	# code that means space can be used as esc key
	set duration 0
	set description "Displays stimuli"

define sketchpad blank_1
	# code that means space can be used as esc key
	set duration 0
	set description "Displays stimuli"

define sketchpad blank_2
	# code that means space can be used as esc key
	set duration 0
	set description "Displays stimuli"

define sketchpad blank_3
	# code that means space can be used as esc key
	set duration 0
	set description "Displays stimuli"

define sketchpad catch_trial_disp
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define sketchpad catch_trial_disp_1
	set duration 2000
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define keyboard_response catch_valid_trial
	set timeout 2500
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response n
	set allowed_responses "y;n;v"

define inline_script detection_accuracy
	set description "Executes Python code"
	___run__
	#calculating detection accuracy for the left
	total_targets = 9
	__end__
	set _prepare ""

define feedback detection_accuracy2
	set reset_variables yes
	set duration mouseclick
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="Thank you, the second block is now completed.<br /><br />Your accuracy for this block was:<br />[total_right_targets_identified]/9<br /><br />Please touch the screen to continue" x=0 y=0 z_index=0

define sketchpad detection_accuracy_1
	set duration keypress
	set description "Displays stimuli"

define feedback detection_accuracy_left
	set reset_variables no
	set duration mouseclick
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=32 html=yes show_if=always text="Thank you, you have completed the first block<br /><br />You correctly identified [total_targets_identified]/9 targets<br />You correctly rejected [total_correct_rejection]/6 trials<br /><br />Please inform the experimenter to continue" x=0 y=0 z_index=0

define inline_script elapsedtime
	set description "Executes Python code"
	___run__
	# amount of time elapsed between target and response
	var.elapsed = clock.time() - target_t0
	__end__
	set _prepare ""

define inline_script elapsedtime_1
	set description "Executes Python code"
	___run__
	# amount of time elapsed between target and response
	var.elapsed = clock.time() - target_t0
	
	if ["catch"] == 1:
		if m.get_pressed()[0] == pressed:
				false_alarm = False 			
		else:
			false_alarm = True
			var.false_alarm_count = var.false_alarm_count+1
	__end__
	set _prepare ""

define sketchpad end_block
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="Thank you, this is the end of the first block.<br /><br />To continue to the next block, please inform the experimenter" x=0 y=0 z_index=0

define sketchpad end_block1
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="Thank you. The second block is now completed.<br /><br />Your accuracy for this block was: <br />[total_right_targets_identified]/9<br /><br />Touch the screen to continue" x=0 y=-32 z_index=0

define sketchpad end_experiment
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="Thank you, you have now completed this task. Please let the experimenter know.<br /><br />" x=0 y=0 z_index=0

define inline_script experiment_scriptL
	set description "Executes Python code"
	set _run ""
	___prepare__
	# script with experiment information
	var.fix_x = 900 #variables with fixation and touch
	var.touch_x = 868
	
	var.fix_x1 = var.fix_x-15 #for presentation of the fix cross (not dot)
	var.fix_x2 = var.fix_x+15
	
	target_identified = False
	__end__

define inline_script experiment_scriptL_1
	set description "Executes Python code"
	set _run ""
	___prepare__
	# script with experiment information
	var.fix_x = 900 #variables with fixation and touch
	var.touch_x = 868
	
	var.fix_x1 = var.fix_x-15 #for presentation of the fix cross (not dot)
	var.fix_x2 = var.fix_x+15
	
	target_identified = False
	__end__

define inline_script experiment_scriptR
	set description "Executes Python code"
	set _run ""
	___prepare__
	# script with experiment information
	var.fix_x = -900 #variables with fixation and touch
	var.touch_x = -932
	
	var.fix_x1 = var.fix_x-15 #for presentation of the fix cross (not dot)
	var.fix_x2 = var.fix_x+15
	
	target_identified = False
	__end__

define sketchpad fixation
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define sketchpad fixation_1
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define sketchpad fixation_2
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script global_prep
	set description "Executes Python code"
	set _run ""
	___prepare__
	# prepare steps that only need to happen once
	
	import csv
	
	# mouse and keyboard import
	from libopensesame import sketchpad_elements
	from openexp.keyboard import keyboard
	
	import random #random number generator
	from random import seed
	from random import choice
	import numpy as np #useful for generating array of target onset times
	
	m = Mouse()
	myKeys = keyboard(exp, keylist=['space'])
	
	
	#beep = items['beep']
	blank = items['blank']
	
	#response items
	stim, response = items['target'], items['target_mouse_response']
	fixation = items['fixation']
	touch_pad = items['touch_pad']
	
	# target files
	var.target_fileL = 'pointingTask_targets_radial7_left.csv'
	var.target_fileR = 'pointingTask_targets_radial7_right.csv'
	
	def in_bounds(x,y,bounds):
		left, top, right, bottom = bounds
		return x > left and x < right and y > top and y < bottom
	
	def wait_while_lmb_pressed(pressed, timeout=None, bounds=None):
	
		"""
		pressed == True : wait while mouse left button pressed,
		within bounds if present
		pressed == False : wait while mouse left button not pressed
		bounds as (left, top, right, bottom)
		"""
		t0 = clock.time()
		while m.get_pressed()[0] == pressed:
			if pressed and bounds:
				(x, y), time = m.get_pos()
				if not in_bounds(x, y, bounds):
					break
			clock.sleep(1)
			if timeout and clock.time() - t0 >= timeout:
				break
				
	
	# running info for degrees visual angle
	# getting information about degrees visual angle
	import math
	from math import atan2, degrees
	h = 17.5 #monitor height in cm
	d = 40 #distance between pp and monitor
	r = 1080 #vertical resolution of monitor
	deg_perPix = degrees(atan2(.5*h, d))/(.5*r)
	var.pix_perDeg = 1/deg_perPix
	
	var.targetSize_pix = var.pix_perDeg*1.25 #size of target in pixels
	targetSize = var.targetSize_pix*deg_perPix #converting both fix target distance and size into deg
	
	# for counting number of targets identified
	var.total_targets_identified = 0
	var.total_miss = 0
	var.total_false_alarm = 0
	var.total_correct_rejection = 0
	var.total_eye_move = 0
	
	# fixation time - randomise
	# create a random matrix to choose from during loop structure - between 500 and 1500ms
	# recording log file specfic to experiment
	subject_nr_string = str(var.subject_nr)
	log.open(
	u'/home/experimenter/amitchell/DMT2019_rawdata/subject%s_visualDetection_left.csv' %subject_nr_string)
	
	# target onset time array
	target_onset_values = list(np.arange(500,1500,100))
	__end__

define sketchpad intro
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=38 html=yes show_if=always text="Target detection task<br /><br />Please say 'yes' when you see a target<br /><br />Touchscreen to begin" x=0 y=0 z_index=0

define sequence left
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback1 always
	run loop1 always
	run detection_accuracy_left always

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log total_targets_identified
	log total_correct_rejection
	log total_miss
	log total_false_alarm
	log subject_nr
	log catch
	log average_response_time
	log x
	log y
	log touch_x
	log count_trial_sequence
	log logfile
	log total_eye_move

define logger logger_1
	set description "Logs experimental data"
	set auto_log yes

define logger logger_2
	set description "Logs experimental data"
	set auto_log yes

define loop loop1
	set source_file "[target_fileL]"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define loop loop2
	set source_file "[target_fileR]"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence_1

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"

define inline_script new_inline_script_1
	set description "Executes Python code"
	___run__
	#incase mouse down when we get there
	wait_while_lmb_pressed(True)
	# wait for "mouse down" i.e. touch
	wait_while_lmb_pressed(False)
	
	t0 = clock.time()
	__end__
	set _prepare ""

define inline_script new_inline_script_2
	set description "Executes Python code"
	___run__
	#incase mouse down when we get there
	wait_while_lmb_pressed(True)
	# wait for "mouse down" i.e. touch
	wait_while_lmb_pressed(False)
	
	t0 = clock.time()
	__end__
	set _prepare ""

define reset_feedback new_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad new_sketchpad_1
	set duration keypress
	set description "Displays stimuli"

define loop outside_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define sequence outside_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sketchpad pause2
	set duration 200
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define sketchpad pause2_1
	set duration 200
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define sketchpad pause2_2
	set duration 200
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define reset_feedback reset_feedback1
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback reset_feedback2
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_script response_coding
	set description "Executes Python code"
	___run__
	#touch response time
	#wait_while_lmb_pressed(False,bounds=target_bounds)
	#var.time_tap = clock.time() - var.tap_t0
	var.mouse_release = False 
	
	if var.catch:
		if self.get('response') == 'y':
			false_alarm = True
			var.total_false_alarm = var.total_false_alarm+1
		if self.get('response') == 'n':
			correct_rejection = True
			var.total_correct_rejection = var.total_correct_rejection+1
		if self.get('response') == 'v':
			eye_move = True
			var.total_eye_move = var.total_eye_move+1
			# prepare trail sequence again
			exp.items['trial_sequence'].prepare()
			# re-run trial sequence
			exp.items['trial_sequence'].run()
	else:
		if self.get('response') == 'y':
			target_identified = True
			var.total_targets_identified = var.total_targets_identified+1
		if self.get('response') == 'n':
			miss = True
			var.total_miss = var.total_miss+1
		if self.get('response') == 'v':
			eye_move = True
			var.total_eye_move = var.total_eye_move+1
			# prepare trail sequence again
			exp.items['trial_sequence'].prepare()
			# re-run trial sequence
			exp.items['trial_sequence'].run()
	__end__
	set _prepare ""

define sequence right
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback2 always
	run loop2 always
	run detection_accuracy2 always

define inline_script right_accuracy_calc
	set description "Executes Python code"
	___run__
	#accuracy for this trial needs a little calculation because total_targets_identified counts the whole sequence
	#need information on just the 9 targets
	__end__
	set _prepare ""

define keyboard_response targ_valid_trial
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response y
	set allowed_responses "y;n;v"

define sketchpad target
	set duration 0
	set description "Displays stimuli"

define sketchpad target_1
	set duration 0
	set description "Displays stimuli"

define sketchpad target_2
	set duration 0
	set description "Displays stimuli"

define inline_script target_identified
	set description "Executes Python code"
	set _run "target_identified = True"
	set _prepare ""

define mouse_response target_mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad target
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response target_mouse_response_1
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad target_1
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response target_mouse_response_2
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad target_2
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define inline_script target_prep
	set description "Executes Python code"
	set _run ""
	___prepare__
	circle_string = 'draw circle x={} y={} r={} fill=1 color=white'.format(var.x,var.y,var.targetSize_pix)
	fix1_string = (
		'draw line color=white penwidth=5 show_if=always x1="{x1}" x2="{x2}" y1=0 y2=0 z_index=0'.format(
			x1=var.fix_x-15, x2=var.fix_x+15)
	)
	fix2_string = 'draw line color=white penwidth=5 show_if=always x1={x} x2={x} y1=-15 y2=15 z_index=0'.format(
		x=var.fix_x)
	
	
	stim.elements = [
		sketchpad_elements.circle(stim,circle_string), 
		sketchpad_elements.line(stim,fix1_string),
		sketchpad_elements.line(stim,fix2_string)]
	
	tr = touch_pad.elements[0].eval_properties()
	target_bounds = (tr['x'], tr['y'], tr['x']+tr['w'], tr['y']+tr['h'])
	
	target_t0 = clock.time()
	
	
	#identifying responses for later
	target_identified = False
	correct_rejection = False
	miss = False
	false_alarm = False
	__end__

define inline_script target_prep_1
	set description "Executes Python code"
	___run__
	
	# wait for "mouse up"
	wait_while_lmb_pressed(True,timeout=200,bounds=target_bounds)
	var.reach_t0 = clock.time() #reaching onset
	var.time_touch_offset = var.reach_t0 - t0 #touch_offset time in seconds
	
	var.mouse_release = False
	
	committed = False
	__end__
	___prepare__
	circle_string = 'draw circle x={} y={} r={} fill=1 color=white'.format(var.x,var.y,var.targetSize_pix)
	fix1_string = (
		'draw line color=white penwidth=5 show_if=always x1="{x1}" x2="{x2}" y1=0 y2=0 z_index=0'.format(
			x1=var.fix_x-15, x2=var.fix_x+15)
	)
	fix2_string = 'draw line color=white penwidth=5 show_if=always x1={x} x2={x} y1=-15 y2=15 z_index=0'.format(
		x=var.fix_x)
	
	
	stim.elements = [
		sketchpad_elements.circle(stim,circle_string), 
		sketchpad_elements.line(stim,fix1_string),
		sketchpad_elements.line(stim,fix2_string)]
	
	tr = touch_pad.elements[0].eval_properties()
	target_bounds = (tr['x'], tr['y'], tr['x']+tr['w'], tr['y']+tr['h'])
	
	target_t0 = clock.time()
	__end__

define sketchpad touch_pad
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define sketchpad touch_pad2
	set duration "[target_onset]"
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define sketchpad touch_pad2_1
	set duration "[target_onset]"
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define sketchpad touch_pad2_2
	set duration "[target_onset]"
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define sketchpad touch_pad3_1
	set duration 2000
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define sketchpad touch_pad_1
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define sketchpad touch_pad_2
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x1]" x2="[fix_x2]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=5 show_if=always x1="[fix_x]" x2="[fix_x]" y1=-15 y2=15 z_index=0

define inline_script touch_release
	set description "Executes Python code"
	___run__
	
	#touch_release time
	wait_while_lmb_pressed(True,bounds=target_bounds)
	
	#var.tap_t0 = clock.time() #reaching onset
	var.mouse_release = True
	__end__
	set _prepare ""

define inline_script touch_release_1
	set description "Executes Python code"
	___run__
	
	#touch_release time
	wait_while_lmb_pressed(True,bounds=target_bounds)
	var.tap_t0 = clock.time() #reaching onset
	var.mouse_release = True
	__end__
	___prepare__
	# amount of time elapsed between target and response
	elapsed = clock.time() - target_t0
	__end__

define inline_script touch_release_2
	set description "Executes Python code"
	___run__
	
	#touch_release time
	wait_while_lmb_pressed(True,bounds=target_bounds)
	var.tap_t0 = clock.time() #reaching onset
	var.mouse_release = True
	__end__
	set _prepare ""

define inline_script touch_response_1
	set description "Executes Python code"
	___run__
	#touch response time
	wait_while_lmb_pressed(False,bounds=target_bounds)
	var.time_tap = clock.time() - var.tap_t0
	var.mouse_release = False 
	
	target_identified = True
	__end__
	set _prepare ""

define inline_script touch_response_2
	set description "Executes Python code"
	___run__
	#touch response time
	wait_while_lmb_pressed(False,bounds=target_bounds)
	var.time_tap = clock.time() - var.tap_t0
	var.mouse_release = False 
	
	target_identified = True
	
	var.total_targets_identified = var.total_targets_identified+1
	var.total_right_targets_identified = var.total_right_targets_identified+1
	__end__
	set _prepare ""

define inline_script touch_response_3
	set description "Executes Python code"
	___run__
	#touch response time
	wait_while_lmb_pressed(False,bounds=target_bounds)
	var.time_tap = clock.time() - var.tap_t0
	var.mouse_release = False 
	
	target_identified = True
	
	var.total_targets_identified = var.total_targets_identified+1
	var.total_left_targets_identified = var.total_left_targets_identified+1
	__end__
	set _prepare ""

define inline_script touch_wait
	set description "Executes Python code"
	___run__
	#incase mouse down when we get there
	wait_while_lmb_pressed(True)
	# wait for "mouse down" i.e. touch
	wait_while_lmb_pressed(False)
	
	t0 = clock.time()
	__end__
	___prepare__
	#generating random variable from list
	var.target_onset = random.choice(target_onset_values)
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experiment_scriptL always
	run blank always
	run fixation always
	run touch_pad always
	run touch_wait always
	run touch_pad2 always
	run target_prep always
	run target "[catch] = 0"
	run catch_trial_disp "[catch] = 1"
	run targ_valid_trial "[catch] = 1"
	run catch_valid_trial always
	run response_coding always
	run pause2 always
	run beep "=correct_rejection or target_identified"
	run logger always

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experiment_scriptR always
	run blank always
	run fixation always
	run touch_pad always
	run touch_wait always
	run touch_pad2 always
	run target_prep always
	run target "[catch] = 0"
	run catch_trial_disp "[catch] = 1"
	run touch_release "[catch] = 0"
	run elapsedtime always
	run target_mouse_response "[catch] = 0 and [elapsed] < 3000"
	run touch_response_2 "[catch] = 0 and [elapsed] < 3000"
	run beep "[catch] = 1 or [elapsed] < 3000"
	run pause2 always
	run logger always

define sequence trial_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experiment_scriptL_1 always
	run blank_3 always
	run fixation_2 always
	run touch_pad_2 always
	run new_inline_script_2 always
	run touch_pad2_2 always
	run target_prep_1 always
	run target_2 "[catch] = 0"
	run catch_trial_disp_1 "[catch] = 1"
	run touch_release_2 "[catch] = 0"
	run elapsedtime_1 always
	run target_mouse_response_2 "[catch] = 0 and [elapsed] < 3000"
	run touch_response_3 "[catch] = 0 and [elapsed] < 3000"
	run beep_2 "[catch] = 1 or [elapsed] < 3000"
	run pause2_2 always
	run logger_2 always

define sequence visual_detection
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run global_prep always
	run intro always
	run left always

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.2 <i>Kafkaesque Koffka</i>" x=0 y=0 z_index=0

